<ReactionScheme><Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/> 

  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PKCc" id="PKCc" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKCc" id="CaPKCc" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="CaPKC" id="CaPKC" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="Ca2PKC" id="Ca2PKC" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="Ca2PKC_act" id="Ca2PKC_act" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_act" id="CaPKC_act" kdiff="6.61" kdiffunit="mu2/s"/>
 
  <Specie name="Ca2PKC_actNg" id="Ca2PKC_actNg" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="Ca2PKC_actNgPA" id="Ca2PKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="CaPKC_actNg" id="CaPKC_actNg" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_actNgPA" id="CaPKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="Ng" id="Ng" kdiff="5" kdiffunit="mu2/s"/>
  <Specie name="pNg" id="pNg" kdiff="5" kdiffunit="mu2/s"/>
  <Specie name="pNgPP2BCaMCa4" id="pNgPP2BCaMCa4" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="NgCaM" id="NgCaM" kdiff="3" kdiffunit="mu2/s"/>
  <Specie name="PA" id="PA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgPA" id="NgPA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pNgPA" id="pNgPA" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM1N" id="CaM1N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM2N" id="CaM2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM1C" id="CaM1C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM1C1N" id="CaM1C1N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM1C2N" id="CaM1C2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM2C" id="CaM2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM2C1N" id="CaM2C1N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>

  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  

  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

  


  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>

 
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>


  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1C"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaM2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C2N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaM2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="CaM1C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM1C1N"/>
    <Product specieID="CaM1C2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2C"/>
    <Product specieID="CaM2C1N"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM2C1N"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

<Reaction name="NgPA_bind" id="NgPA_bind">
    <Reactant specieID="PA"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgPA"/>
    <forwardRate>0.00036</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="pNgPA_bind" id="pNgPA_bind">
    <Reactant specieID="PA"/>
    <Reactant specieID="pNg"/>
    <Product specieID="pNgPA"/>
    <forwardRate>0.0000036e-2</forwardRate>
    <reverseRate>36.e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
      

<Reaction name="PKCc+Ca--CaPKCc" id="PKCc+Ca--CaPKCc">
        <Reactant specieID="Ca"/>
        <Reactant specieID="PKCc"/>
        <Product specieID="CaPKCc"/>

        <forwardRate> 13.3e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKCc--CaPKC" id="CaPKCc--CaPKC">
        <Reactant specieID="CaPKCc"/>
        <Product specieID="CaPKC"/>
        <forwardRate> 420e-3   </forwardRate>
        <reverseRate> 17e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC+Ca--Ca2PKC" id="CaPKC+Ca--Ca2PKC">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CaPKC"/>
        <Product specieID="Ca2PKC"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="Ca2PKC--Ca2PKC_act" id="Ca2PKC--Ca2PKC_act">
        <Reactant specieID="Ca2PKC"/>
        <Product specieID="Ca2PKC_act"/>
        <forwardRate> 3e-3   </forwardRate>
        <reverseRate> 5e-3       </reverseRate>
    </Reaction>
    <Reaction name="CaPKC_act+Ca--Ca2PKC_act" id="CaPKC_act+Ca--Ca2PKC_act">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Ca"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC_act--CaPKC" id="CaPKC_act--CaPKC">
        <Reactant specieID="CaPKC_act"/>
        <Product specieID="CaPKC"/>

        <forwardRate> 5e-3   </forwardRate>
        <reverseRate> 0 </reverseRate>
    </Reaction>
    
  <Reaction name="Ca2PKC_act +Ng--Ca2PKC_actNg" id="Ca2PKC_act+Ng--Ca2PKC_actNg">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="Ng"/>
        <Product specieID="Ca2PKC_actNg"/>

        <forwardRate> 2.48e-5   </forwardRate>
        <reverseRate> 0.15e-03        </reverseRate>
    </Reaction>
    <Reaction name="Ca2PKC_actNgphos" id="Ca2PKC_actNgphos">
        <Reactant specieID="Ca2PKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
  <Reaction name="Ca2PKC_act +NgPA--Ca2PKC_actNg" id="Ca2PKC_act+NgPA--Ca2PKC_actNg">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="Ca2PKC_actNgPA"/>

        <forwardRate> 2.48e-5   </forwardRate>
        <reverseRate> 0.15e-03        </reverseRate>
    </Reaction>
    <Reaction name="Ca2PKC_actNgPAphos" id="Ca2PKC_actNgPAphos">
        <Reactant specieID="Ca2PKC_actNgPA"/>
        <Product specieID="pNgPA"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

 <Reaction name="CaPKC_actNgphos" id="CaPKC_actNgphos">
        <Reactant specieID="CaPKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
  <Reaction name="CaPKC_act +NgPA--CaPKC_actNg" id="CaPKC_act+NgPA--CaPKC_actNg">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="CaPKC_actNgPA"/>

        <forwardRate> 2.48e-5   </forwardRate>
        <reverseRate> 0.15e-03        </reverseRate>
    </Reaction>
    <Reaction name="CaPKC_actNgPAphos" id="CaPKC_actNgPAphos">
        <Reactant specieID="CaPKC_actNgPA"/>
        <Product specieID="pNgPA"/>
        <Product specieID="CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>


    <Reaction name="pNg +PP2CaMC4--pNgPP2BCaMCa4" id="pNg +PP2CaMC4--pNgPP2BCaMCa4">
        <Reactant specieID="pNg"/>
        <Reactant specieID="PP2BCaMCa4"/>
        <Product specieID="pNgPP2BCaMCa4"/>

        <forwardRate> 2.46e-05   </forwardRate>
        <reverseRate> 0.33        </reverseRate>
    </Reaction>
    <Reaction name="pNgPP2BCaMCa4 dephos" id="pNgPP2bCaMCa4 dephos">
        <Reactant specieID="pNgPP2BCaMCa4"/>
        <Product specieID="Ng"/>
        <Product specieID="PP2BCaMCa4"/>

        <forwardRate> 0.182e-3  </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
    
<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="PP2B" id="PP2B" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C" id="PP2BCaM1C" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1N" id="PP2BCaM1N" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM2C" id="PP2BCaM2C" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2CaM2N" id="PP2BCaM2N" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C1N" id="PP2BCaM1C1N" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM1C2N" id="PP2BCaM1C2N" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM2C1N" id="PP2BCaM2C1N" kdiff="0.61" kdiffunit="mu2/s"/>
  <Reaction name="CaM+PP2B--PP2BCaM reac" id="CaM+PP2B--PP2BCaM_id">
    <Reactant specieID="CaM"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM"/>
    
    <forwardRate> 7.98e-14 </forwardRate>
    <reverseRate>  3.19e-7    </reverseRate>
  </Reaction>


  <Reaction name="CaM1C+PP2B--PP2BCaM1C reac" id="CaM1C+PP2B--PP2BCaM1C_id">
    <Reactant specieID="CaM1C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C"/>
    
    <forwardRate> 1.334e-11       </forwardRate>
    <reverseRate> 3.19e-7  </reverseRate>
  </Reaction>

    <Reaction name="CaM2C+PP2B--PP2BCaM2C reac" id="CaM2C+PP2B--PP2BCaM2C_id">
    <Reactant specieID="CaM2C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM2C"/>
    
    <forwardRate>   1.23e-10     </forwardRate>
    <reverseRate>  3.19e-7     </reverseRate>
  </Reaction>
  
  <Reaction name="CaM1N+PP2B--PP2BCaM1N reac" id="CaM1N+PP2B--PP2BCaM1N_id">
    <Reactant specieID="CaM1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1N"/>
    
    <forwardRate> 6.65e-12     </forwardRate>
    <reverseRate>  3.19e-7     </reverseRate>
  </Reaction>

  <Reaction name="CaM2N+PP2B--PP2BCaM2N reac" id="CaM2N+PP2B--PP2BCaM2N_id">
    <Reactant specieID="CaM2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM2N"/>
    
    <forwardRate> 4.16e-10  </forwardRate>
    <reverseRate> 3.19e-7 </reverseRate>
  </Reaction>


  <Reaction name="CaM1C1N+PP2B--PP2BCaM1C1N reac" id="CaM1C1N+PP2B--PP2BCaM1C1N_id">
    <Reactant specieID="CaM1C1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C1N"/>
    
    <forwardRate> 6.65e-10       </forwardRate>
    <reverseRate>  3.19e-7     </reverseRate>
  </Reaction>

  <Reaction name="CaM2C1N+PP2B--PP2BCaM2C1N reac" id="CaM2C1N+PP2B--PP2BCaM2C1N_id">
    <Reactant specieID="CaM2C1N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM2C1N"/>
    
    <forwardRate> 1.02e-8       </forwardRate>
    <reverseRate>  3.19e-7     </reverseRate>
  </Reaction>

  <Reaction name="CaM1C2N+PP2B--PP2BCaM1C2N reac" id="CaM1C2N+PP2B--PP2BCaM1C2N_id">
    <Reactant specieID="CaM1C2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM1C2N"/>
    
    <forwardRate> 4.16e-8 </forwardRate>
    <reverseRate>  3.19e-7</reverseRate>
  </Reaction>

  <Reaction name="CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 6.4e-7       </forwardRate>
    <reverseRate> 3.19e-7      </reverseRate>
  </Reaction>

  <Reaction name="PP2Breaction1" id="PP2Breaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM"/>
    <Product specieID="PP2BCaM1C"/>
    <forwardRate>0.00356</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction3" id="PP2Breaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1N"/>
    <Product specieID="PP2BCaM1C1N"/>
    <forwardRate>0.002137</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  
  <Reaction name="PP2Breaction5" id="PP2Breaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM2N"/>
    <Product specieID="PP2BCaM1C2N"/>
    <forwardRate>0.0021375</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction7" id="PP2Breaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C"/>
    <Product specieID="PP2BCaM2C"/>
    <forwardRate>0.0088055</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction9" id="PP2Breaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C1N"/>
    <Product specieID="PP2BCaM2C1N"/>
    <forwardRate>0.01465</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction11" id="PP2Breaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C2N"/>
    <Product specieID="PP2BCaMCa4"/>
    <forwardRate>0.01469</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction13" id="PP2Breaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM"/>
    <Product specieID="PP2BCaM1N"/>
    <forwardRate>0.89292</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction15" id="PP2Breaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1N"/>
    <Product specieID="PP2BCaM2N"/>
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction17" id="PP2Breaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C"/>
    <Product specieID="PP2BCaM1C1N"/>
    <forwardRate>0.5341</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction19" id="PP2Breaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM1C1N"/>
    <Product specieID="PP2BCaM1C2N"/>
    <forwardRate>0.12199</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction21" id="PP2Breaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM2C"/>
    <Product specieID="PP2BCaM2C1N"/>
    <forwardRate>0.8886</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="PP2Breaction23" id="PP2Breaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PP2BCaM2C1N"/>
    <Product specieID="PP2BCaMCa4"/>
    <forwardRate>0.122</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<Specie name="CaCbuf" id="CaCbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="Cbuf" id="Cbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaBCa" id="CaBCa" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaB" id="CaB" kdiff="10" kdiffunit="mu2/s"/>
  
  <Reaction name="CaIn_buffer" id="CaIn_buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaB"/>
    <Product specieID="CaBCa"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaCbufCa+Cbuf" id="CaCbufCa+Cbuf">
    <Reactant specieID="CaCbuf"/>
    <Product specieID="Cbuf"/>
    <Product specieID="Ca"/>
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="CaOut+CbufNULL" id="CaOut_CbufNULL">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Cbuf"/>
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
</ReactionScheme>
