<?xml version="1.0" encoding="utf-8"?>
<!-- with no CaM, Ca affinity to RyR2 of 1 uM fits much better. For RyR2CaM Ca affinity should probably 2 uM or 4 uM -->
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="200" kdiffunit="mu2/s"/>
 
  <Specie name="RyR2" id="RyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM" id="RyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C" id="RyR2CaM1C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2C" id="RyR2CaM2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1N" id="RyR2CaM1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2N" id="RyR2CaM2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C1N" id="RyR2CaM1C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM2C1N" id="RyR2CaM2C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM1C2N" id="RyR2CaM1C2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa4" id="RyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>


  <Specie name="CaRyR2" id="CaRyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM" id="CaRyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C" id="CaRyR2CaM1C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2C" id="CaRyR2CaM2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1N" id="CaRyR2CaM1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2N" id="CaRyR2CaM2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C1N" id="CaRyR2CaM1C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM2C1N" id="CaRyR2CaM2C1N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM1C2N" id="CaRyR2CaM1C2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaMCa4" id="CaRyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>



  <Reaction name="RyR2Ca1" id="RyR2Ca1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>
  
  <Reaction name="RyR2CaMCa1" id="RyR2CaMCa1">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1CCa1" id="RyR2CaM1CCa1">
    <Reactant specieID="RyR2CaM1C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2CCa1" id="RyR2CaM2CCa1">
    <Reactant specieID="RyR2CaM2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2C"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1NCa1" id="RyR2CaM1NCa1">
    <Reactant specieID="RyR2CaM1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2NCa1" id="RyR2CaM2NCa1">
    <Reactant specieID="RyR2CaM2N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1C1NCa1" id="RyR2CaM1C1NCa1">
    <Reactant specieID="RyR2CaM1C1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM1C2NCa1" id="RyR2CaM1C2NCa1">
    <Reactant specieID="RyR2CaM1C2N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM1C2N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaM2C1NCa1" id="RyR2CaM2C1NCa1">
    <Reactant specieID="RyR2CaM2C1N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM2C1N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  
  <Reaction name="RyR2CaMCa4Ca1" id="RyR2CaMCa4Ca1">
    <Reactant specieID="RyR2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  
  <Reaction name="RyR22_CaM_1" id="RyR2_CaM_1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaM1C_2" id="RyR2_CaM1C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="RyR2CaM1C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaMCa2C_2" id="RyR2_CaMCa2C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2CaM2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaM1N_2" id="RyR2_CaM1N_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="RyR2CaM1N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2_CaMCa2N_2" id="RyR2_CaMCa2N_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="RyR2CaM2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

   <Reaction name="RyR2_CaM1C1N_3" id="RyR2_CaM1C1N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM1C1N"/>
     <Product specieID="RyR2CaM1C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="RyR2_CaM2C1N_3" id="RyR2_CaM2C1N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM2C1N"/>
     <Product specieID="RyR2CaM2C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>
   <Reaction name="RyR2_CaM1C2N_3" id="RyR2_CaM1C2N_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaM1C2N"/>
     <Product specieID="RyR2CaM1C2N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="RyR2_CaMCa4_3" id="RyR2_CaMCa4_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <!-- RyR2CaM Ca to CaM binding -->
	
  <Reaction name="ryr2_reaction1" id="ryr2_reaction1">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM" />
    <Product specieID="RyR2CaM1C" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction3" id="ryr2_reaction3">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1N" />
    <Product specieID="RyR2CaM1C1N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction5" id="ryr2_reaction5">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM2N" />
    <Product specieID="RyR2CaM1C2N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction7" id="ryr2_reaction7">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1C" />
    <Product specieID="RyR2CaM2C" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction9" id="ryr2_reaction9">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1C1N" />
    <Product specieID="RyR2CaM2C1N" />
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction11" id="ryr2_reaction11">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1C2N" />
    <Product specieID="RyR2CaMCa4" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction13" id="ryr2_reaction13">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM" />
    <Product specieID="RyR2CaM1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction15" id="ryr2_reaction15">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1N" />
    <Product specieID="RyR2CaM2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction17" id="ryr2_reaction17">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1C" />
    <Product specieID="RyR2CaM1C1N" />
    <forwardRate>0.01075</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction19" id="ryr2_reaction19">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM1C1N" />
    <Product specieID="RyR2CaM1C2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction21" id="ryr2_reaction21">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM2C" />
    <Product specieID="RyR2CaM2C1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="ryr2_reaction23" id="ryr2_reaction23">
    <Reactant specieID="Ca" />
    <Reactant specieID="RyR2CaM2C1N" />
    <Product specieID="RyR2CaMCa4" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<!--xxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxx --> 
  <Reaction name="CaRyR22_CaM_1" id="CaRyR2_CaM_1">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaM1C_2" id="CaRyR2_CaM1C_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM1C"/>
    <Product specieID="RyR2CaM1C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaMCa2C_2" id="CaRyR2_CaMCa2C_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaRyR2CaM2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaM1N_2" id="CaRyR2_CaM1N_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM1N"/>
    <Product specieID="CaRyR2CaM1N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2_CaMCa2N_2" id="CaRyR2_CaMCa2N_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaRyR2CaM2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.0002</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

   <Reaction name="CaRyR2_CaM1C1N_3" id="CaRyR2_CaM1C1N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM1C1N"/>
     <Product specieID="CaRyR2CaM1C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="CaRyR2_CaM2C1N_3" id="CaRyR2_CaM2C1N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM2C1N"/>
     <Product specieID="CaRyR2CaM2C1N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>
   <Reaction name="CaRyR2_CaM1C2N_3" id="CaRyR2_CaM1C2N_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaM1C2N"/>
     <Product specieID="CaRyR2CaM1C2N"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="CaRyR2_CaMCa4_3" id="CaRyR2_CaMCa4_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="CaRyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.12e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   
<!-- CaRyR2CaM Ca to CaM binding -->
	
  <Reaction name="caryr2_reaction1" id="caryr2_reaction1">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM" />
    <Product specieID="CaRyR2CaM1C" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction3" id="caryr2_reaction3">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1N" />
    <Product specieID="CaRyR2CaM1C1N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction5" id="caryr2_reaction5">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM2N" />
    <Product specieID="CaRyR2CaM1C2N" />
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.00398</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction7" id="caryr2_reaction7">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1C" />
    <Product specieID="CaRyR2CaM2C" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction9" id="caryr2_reaction9">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1C1N" />
    <Product specieID="CaRyR2CaM2C1N" />
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction11" id="caryr2_reaction11">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1C2N" />
    <Product specieID="CaRyR2CaMCa4" />
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction13" id="caryr2_reaction13">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM" />
    <Product specieID="CaRyR2CaM1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction15" id="caryr2_reaction15">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1N" />
    <Product specieID="CaRyR2CaM2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction17" id="caryr2_reaction17">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1C" />
    <Product specieID="CaRyR2CaM1C1N" />
    <forwardRate>0.01075</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction19" id="caryr2_reaction19">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM1C1N" />
    <Product specieID="CaRyR2CaM1C2N" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction21" id="caryr2_reaction21">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM2C" />
    <Product specieID="CaRyR2CaM2C1N" />
    <forwardRate>0.010715</forwardRate>
    <reverseRate>79.4328</reverseRate>
  </Reaction>
  <Reaction name="caryr2_reaction23" id="caryr2_reaction23">
    <Reactant specieID="Ca" />
    <Reactant specieID="CaRyR2CaM2C1N" />
    <Product specieID="CaRyR2CaMCa4" />
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

<!--xxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxxx --> 
   

   
</ReactionScheme>
