<ReactionScheme><Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/> 

  
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaMCa2C" id="NgCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>

  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  

  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

  


  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.47e-3</forwardRate>
    <reverseRate>14.697e-24</reverseRate>
  </Reaction>

 
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.06e-3</forwardRate>

  </Reaction>


  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="CaMN_bind" id="CaMN_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa2N"/>
    <forwardRate>2.62e-8</forwardRate>
    <reverseRate>3.61</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaMCa2N_bind" id="CaMCa2N_bind">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>1.62e-7</forwardRate>
    <reverseRate>0.438</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  
  <Reaction name="CaMC_bind" id="CaMC_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa2C"/>
    
    <forwardRate>1.62e-7</forwardRate>
    <reverseRate>0.438</reverseRate>
    
  </Reaction>

  <Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa4"/>
    
    <forwardRate>2.62e-8</forwardRate>
    <reverseRate>3.61</reverseRate>
    
  </Reaction>

 
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
   <Reaction name="NgCaMCa2_bind" id="NgCaMCa2C_bind">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaMCa2C"/>
    <forwardRate>2e-6</forwardRate>
    <reverseRate>136.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="NgCaM_bind_2C" id="NgCaM_bind_2C">
    <Reactant specieID="NgCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="NgCaMCa2C"/>
    
    <forwardRate>3.063e-8</forwardRate>
    <reverseRate>4.38</reverseRate>
    
  </Reaction>
<Specie name="RyR2" id="RyR2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa4" id="RyR2_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaMCa4" id="RyR2_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaMCa4" id="RyR2_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_4CaMCa4" id="RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa2C" id="RyR2_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa2C_1CaMCa4" id="RyR2_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa2C_2CaMCa4" id="RyR2_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa2C_3CaMCa4" id="RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaMCa2C" id="RyR2_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaMCa2C_1CaMCa4" id="RyR2_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaMCa2C_2CaMCa4" id="RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaMCa2C" id="RyR2_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaMCa2C_1CaMCa4" id="RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_4CaMCa2C" id="RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM" id="RyR2_1CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_1CaMCa4" id="RyR2_1CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_2CaMCa4" id="RyR2_1CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_3CaMCa4" id="RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_1CaMCa2C" id="RyR2_1CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_1CaMCa2C_1CaMCa4" id="RyR2_1CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_1CaMCa2C_2CaMCa4" id="RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_2CaMCa2C" id="RyR2_1CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_2CaMCa2C_1CaMCa4" id="RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_3CaMCa2C" id="RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM" id="RyR2_2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_1CaMCa4" id="RyR2_2CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_2CaMCa4" id="RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_1CaMCa2C" id="RyR2_2CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_1CaMCa2C_1CaMCa4" id="RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_2CaMCa2C" id="RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaM" id="RyR2_3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaM_1CaMCa4" id="RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaM_1CaMCa2C" id="RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_4CaM" id="RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2" id="Ca1_RyR2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa4" id="Ca1_RyR2_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaMCa4" id="Ca1_RyR2_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaMCa4" id="Ca1_RyR2_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaMCa4" id="Ca1_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa2C" id="Ca1_RyR2_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa2C_1CaMCa4" id="Ca1_RyR2_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa2C_2CaMCa4" id="Ca1_RyR2_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa2C_3CaMCa4" id="Ca1_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaMCa2C" id="Ca1_RyR2_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaMCa2C_1CaMCa4" id="Ca1_RyR2_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaMCa2C_2CaMCa4" id="Ca1_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaMCa2C" id="Ca1_RyR2_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaMCa2C_1CaMCa4" id="Ca1_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaMCa2C" id="Ca1_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM" id="Ca1_RyR2_1CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_1CaMCa4" id="Ca1_RyR2_1CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_2CaMCa4" id="Ca1_RyR2_1CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_3CaMCa4" id="Ca1_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_1CaMCa2C" id="Ca1_RyR2_1CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_2CaMCa2C" id="Ca1_RyR2_1CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_3CaMCa2C" id="Ca1_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM" id="Ca1_RyR2_2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_1CaMCa4" id="Ca1_RyR2_2CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_2CaMCa4" id="Ca1_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_1CaMCa2C" id="Ca1_RyR2_2CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_2CaMCa2C" id="Ca1_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaM" id="Ca1_RyR2_3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaM_1CaMCa4" id="Ca1_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaM_1CaMCa2C" id="Ca1_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaM" id="Ca1_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2" id="Ca2_RyR2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa4" id="Ca2_RyR2_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaMCa4" id="Ca2_RyR2_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaMCa4" id="Ca2_RyR2_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaMCa4" id="Ca2_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa2C" id="Ca2_RyR2_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa2C_1CaMCa4" id="Ca2_RyR2_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa2C_2CaMCa4" id="Ca2_RyR2_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa2C_3CaMCa4" id="Ca2_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaMCa2C" id="Ca2_RyR2_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaMCa2C_1CaMCa4" id="Ca2_RyR2_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaMCa2C_2CaMCa4" id="Ca2_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaMCa2C" id="Ca2_RyR2_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaMCa2C_1CaMCa4" id="Ca2_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaMCa2C" id="Ca2_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM" id="Ca2_RyR2_1CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_1CaMCa4" id="Ca2_RyR2_1CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_2CaMCa4" id="Ca2_RyR2_1CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_3CaMCa4" id="Ca2_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_1CaMCa2C" id="Ca2_RyR2_1CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_2CaMCa2C" id="Ca2_RyR2_1CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_3CaMCa2C" id="Ca2_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM" id="Ca2_RyR2_2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_1CaMCa4" id="Ca2_RyR2_2CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_2CaMCa4" id="Ca2_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_1CaMCa2C" id="Ca2_RyR2_2CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_2CaMCa2C" id="Ca2_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaM" id="Ca2_RyR2_3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaM_1CaMCa4" id="Ca2_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaM_1CaMCa2C" id="Ca2_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaM" id="Ca2_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2" id="Ca3_RyR2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa4" id="Ca3_RyR2_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaMCa4" id="Ca3_RyR2_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaMCa4" id="Ca3_RyR2_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaMCa4" id="Ca3_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa2C" id="Ca3_RyR2_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa2C_1CaMCa4" id="Ca3_RyR2_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa2C_2CaMCa4" id="Ca3_RyR2_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa2C_3CaMCa4" id="Ca3_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaMCa2C" id="Ca3_RyR2_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaMCa2C_1CaMCa4" id="Ca3_RyR2_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaMCa2C_2CaMCa4" id="Ca3_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaMCa2C" id="Ca3_RyR2_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaMCa2C_1CaMCa4" id="Ca3_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaMCa2C" id="Ca3_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM" id="Ca3_RyR2_1CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_1CaMCa4" id="Ca3_RyR2_1CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_2CaMCa4" id="Ca3_RyR2_1CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_3CaMCa4" id="Ca3_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_1CaMCa2C" id="Ca3_RyR2_1CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_2CaMCa2C" id="Ca3_RyR2_1CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_3CaMCa2C" id="Ca3_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM" id="Ca3_RyR2_2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_1CaMCa4" id="Ca3_RyR2_2CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_2CaMCa4" id="Ca3_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_1CaMCa2C" id="Ca3_RyR2_2CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_2CaMCa2C" id="Ca3_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaM" id="Ca3_RyR2_3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaM_1CaMCa4" id="Ca3_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaM_1CaMCa2C" id="Ca3_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaM" id="Ca3_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2" id="Ca4_RyR2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4" id="Ca4_RyR2_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4" id="Ca4_RyR2_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4" id="Ca4_RyR2_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4" id="Ca4_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C" id="Ca4_RyR2_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4" id="Ca4_RyR2_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4" id="Ca4_RyR2_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4" id="Ca4_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C" id="Ca4_RyR2_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4" id="Ca4_RyR2_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4" id="Ca4_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C" id="Ca4_RyR2_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4" id="Ca4_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C" id="Ca4_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM" id="Ca4_RyR2_1CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4" id="Ca4_RyR2_1CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4" id="Ca4_RyR2_1CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4" id="Ca4_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C" id="Ca4_RyR2_1CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C" id="Ca4_RyR2_1CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C" id="Ca4_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM" id="Ca4_RyR2_2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4" id="Ca4_RyR2_2CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4" id="Ca4_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C" id="Ca4_RyR2_2CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C" id="Ca4_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM" id="Ca4_RyR2_3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4" id="Ca4_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C" id="Ca4_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM" id="Ca4_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_O1" id="Ca4_RyR2_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_O2" id="Ca4_RyR2_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_C1" id="Ca4_RyR2_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_I" id="Ca4_RyR2_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4_O1" id="Ca4_RyR2_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4_O2" id="Ca4_RyR2_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4_C1" id="Ca4_RyR2_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4_I" id="Ca4_RyR2_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa4_I2" id="Ca4_RyR2_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4_O1" id="Ca4_RyR2_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4_O2" id="Ca4_RyR2_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4_C1" id="Ca4_RyR2_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4_I" id="Ca4_RyR2_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa4_I2" id="Ca4_RyR2_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4_O1" id="Ca4_RyR2_3CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4_O2" id="Ca4_RyR2_3CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4_C1" id="Ca4_RyR2_3CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4_I" id="Ca4_RyR2_3CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa4_I2" id="Ca4_RyR2_3CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_O1" id="Ca4_RyR2_4CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_O2" id="Ca4_RyR2_4CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_C1" id="Ca4_RyR2_4CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_I" id="Ca4_RyR2_4CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_I2" id="Ca4_RyR2_4CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_O1" id="Ca4_RyR2_1CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_O2" id="Ca4_RyR2_1CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_C1" id="Ca4_RyR2_1CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_I" id="Ca4_RyR2_1CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I2" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_O1" id="Ca4_RyR2_2CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_O2" id="Ca4_RyR2_2CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_C1" id="Ca4_RyR2_2CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_I" id="Ca4_RyR2_2CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_O1" id="Ca4_RyR2_3CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_O2" id="Ca4_RyR2_3CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_C1" id="Ca4_RyR2_3CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_I" id="Ca4_RyR2_3CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_O1" id="Ca4_RyR2_4CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_O2" id="Ca4_RyR2_4CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_C1" id="Ca4_RyR2_4CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_I" id="Ca4_RyR2_4CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_O1" id="Ca4_RyR2_1CaM_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_O2" id="Ca4_RyR2_1CaM_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_C1" id="Ca4_RyR2_1CaM_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_I" id="Ca4_RyR2_1CaM_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4_O1" id="Ca4_RyR2_1CaM_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4_O2" id="Ca4_RyR2_1CaM_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4_C1" id="Ca4_RyR2_1CaM_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4_I" id="Ca4_RyR2_1CaM_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa4_I2" id="Ca4_RyR2_1CaM_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4_O1" id="Ca4_RyR2_1CaM_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4_O2" id="Ca4_RyR2_1CaM_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4_C1" id="Ca4_RyR2_1CaM_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4_I" id="Ca4_RyR2_1CaM_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa4_I2" id="Ca4_RyR2_1CaM_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_O1" id="Ca4_RyR2_1CaM_3CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_O2" id="Ca4_RyR2_1CaM_3CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_C1" id="Ca4_RyR2_1CaM_3CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_I" id="Ca4_RyR2_1CaM_3CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_I2" id="Ca4_RyR2_1CaM_3CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_O1" id="Ca4_RyR2_1CaM_1CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_O2" id="Ca4_RyR2_1CaM_1CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_C1" id="Ca4_RyR2_1CaM_1CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_I" id="Ca4_RyR2_1CaM_1CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_O1" id="Ca4_RyR2_1CaM_2CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_O2" id="Ca4_RyR2_1CaM_2CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_C1" id="Ca4_RyR2_1CaM_2CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_I" id="Ca4_RyR2_1CaM_2CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_O1" id="Ca4_RyR2_1CaM_3CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_O2" id="Ca4_RyR2_1CaM_3CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_C1" id="Ca4_RyR2_1CaM_3CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_I" id="Ca4_RyR2_1CaM_3CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_O1" id="Ca4_RyR2_2CaM_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_O2" id="Ca4_RyR2_2CaM_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_C1" id="Ca4_RyR2_2CaM_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_I" id="Ca4_RyR2_2CaM_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4_O1" id="Ca4_RyR2_2CaM_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4_O2" id="Ca4_RyR2_2CaM_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4_C1" id="Ca4_RyR2_2CaM_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4_I" id="Ca4_RyR2_2CaM_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa4_I2" id="Ca4_RyR2_2CaM_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_O1" id="Ca4_RyR2_2CaM_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_O2" id="Ca4_RyR2_2CaM_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_C1" id="Ca4_RyR2_2CaM_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_I" id="Ca4_RyR2_2CaM_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_I2" id="Ca4_RyR2_2CaM_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_O1" id="Ca4_RyR2_2CaM_1CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_O2" id="Ca4_RyR2_2CaM_1CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_C1" id="Ca4_RyR2_2CaM_1CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_I" id="Ca4_RyR2_2CaM_1CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_O1" id="Ca4_RyR2_2CaM_2CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_O2" id="Ca4_RyR2_2CaM_2CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_C1" id="Ca4_RyR2_2CaM_2CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_I" id="Ca4_RyR2_2CaM_2CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_O1" id="Ca4_RyR2_3CaM_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_O2" id="Ca4_RyR2_3CaM_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_C1" id="Ca4_RyR2_3CaM_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_I" id="Ca4_RyR2_3CaM_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_O1" id="Ca4_RyR2_3CaM_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_O2" id="Ca4_RyR2_3CaM_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_C1" id="Ca4_RyR2_3CaM_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_I" id="Ca4_RyR2_3CaM_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_I2" id="Ca4_RyR2_3CaM_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_O1" id="Ca4_RyR2_3CaM_1CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_O2" id="Ca4_RyR2_3CaM_1CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_C1" id="Ca4_RyR2_3CaM_1CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_I" id="Ca4_RyR2_3CaM_1CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_O1" id="Ca4_RyR2_4CaM_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_O2" id="Ca4_RyR2_4CaM_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_C1" id="Ca4_RyR2_4CaM_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_I" id="Ca4_RyR2_4CaM_I" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="RyR2_CaM_1" id="RyR2_CaM_1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_CaMCa2C_2" id="RyR2_CaMCa2C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_CaMCa4_3" id="RyR2_CaMCa4_3">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_RyR2Ca1_4" id="RyR2_RyR2Ca1_4">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa4_CaM_5" id="RyR2_1CaMCa4_CaM_5">
    <Reactant specieID="RyR2_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa4_CaMCa2C_6" id="RyR2_1CaMCa4_CaMCa2C_6">
    <Reactant specieID="RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa4_CaMCa4_7" id="RyR2_1CaMCa4_CaMCa4_7">
    <Reactant specieID="RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa4_CaMRyR2Ca1_8" id="RyR2_1CaMCa4_CaMRyR2Ca1_8">
    <Reactant specieID="RyR2_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa4_CaM_9" id="RyR2_2CaMCa4_CaM_9">
    <Reactant specieID="RyR2_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa4_CaMCa2C_10" id="RyR2_2CaMCa4_CaMCa2C_10">
    <Reactant specieID="RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa4_CaMCa4_11" id="RyR2_2CaMCa4_CaMCa4_11">
    <Reactant specieID="RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa4_CaMRyR2Ca1_12" id="RyR2_2CaMCa4_CaMRyR2Ca1_12">
    <Reactant specieID="RyR2_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa4_CaM_13" id="RyR2_3CaMCa4_CaM_13">
    <Reactant specieID="RyR2_3CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa4_CaMCa2C_14" id="RyR2_3CaMCa4_CaMCa2C_14">
    <Reactant specieID="RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa4_CaMCa4_15" id="RyR2_3CaMCa4_CaMCa4_15">
    <Reactant specieID="RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_4CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa4_CaMRyR2Ca1_16" id="RyR2_3CaMCa4_CaMRyR2Ca1_16">
    <Reactant specieID="RyR2_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaMCa4_CaMRyR2Ca1_17" id="RyR2_4CaMCa4_CaMRyR2Ca1_17">
    <Reactant specieID="RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_CaM_18" id="RyR2_1CaMCa2C_CaM_18">
    <Reactant specieID="RyR2_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_CaMCa2C_19" id="RyR2_1CaMCa2C_CaMCa2C_19">
    <Reactant specieID="RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_CaMCa4_20" id="RyR2_1CaMCa2C_CaMCa4_20">
    <Reactant specieID="RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaN_21" id="RyR2_1CaMCa2C_2CaN_21">
    <Reactant specieID="RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_CaMRyR2Ca1_22" id="RyR2_1CaMCa2C_CaMRyR2Ca1_22">
    <Reactant specieID="RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_1CaMCa4_CaM_23" id="RyR2_1CaMCa2C_1CaMCa4_CaM_23">
    <Reactant specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_24" id="RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_24">
    <Reactant specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_1CaMCa4_CaMCa4_25" id="RyR2_1CaMCa2C_1CaMCa4_CaMCa4_25">
    <Reactant specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_1CaMCa4_2CaN_26" id="RyR2_1CaMCa2C_1CaMCa4_2CaN_26">
    <Reactant specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_27" id="RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_27">
    <Reactant specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaMCa4_CaM_28" id="RyR2_1CaMCa2C_2CaMCa4_CaM_28">
    <Reactant specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_29" id="RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_29">
    <Reactant specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaMCa4_CaMCa4_30" id="RyR2_1CaMCa2C_2CaMCa4_CaMCa4_30">
    <Reactant specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaMCa4_2CaN_31" id="RyR2_1CaMCa2C_2CaMCa4_2CaN_31">
    <Reactant specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_32" id="RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_32">
    <Reactant specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_3CaMCa4_2CaN_33" id="RyR2_1CaMCa2C_3CaMCa4_2CaN_33">
    <Reactant specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_4CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca1_34" id="RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca1_34">
    <Reactant specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_CaM_35" id="RyR2_2CaMCa2C_CaM_35">
    <Reactant specieID="RyR2_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_CaMCa2C_36" id="RyR2_2CaMCa2C_CaMCa2C_36">
    <Reactant specieID="RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_CaMCa4_37" id="RyR2_2CaMCa2C_CaMCa4_37">
    <Reactant specieID="RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_2CaN_38" id="RyR2_2CaMCa2C_2CaN_38">
    <Reactant specieID="RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_CaMRyR2Ca1_39" id="RyR2_2CaMCa2C_CaMRyR2Ca1_39">
    <Reactant specieID="RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_1CaMCa4_CaM_40" id="RyR2_2CaMCa2C_1CaMCa4_CaM_40">
    <Reactant specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_41" id="RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_41">
    <Reactant specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_1CaMCa4_CaMCa4_42" id="RyR2_2CaMCa2C_1CaMCa4_CaMCa4_42">
    <Reactant specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_1CaMCa4_2CaN_43" id="RyR2_2CaMCa2C_1CaMCa4_2CaN_43">
    <Reactant specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_44" id="RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_44">
    <Reactant specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_2CaMCa4_2CaN_45" id="RyR2_2CaMCa2C_2CaMCa4_2CaN_45">
    <Reactant specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca1_46" id="RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca1_46">
    <Reactant specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_CaM_47" id="RyR2_3CaMCa2C_CaM_47">
    <Reactant specieID="RyR2_3CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_CaMCa2C_48" id="RyR2_3CaMCa2C_CaMCa2C_48">
    <Reactant specieID="RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_4CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_CaMCa4_49" id="RyR2_3CaMCa2C_CaMCa4_49">
    <Reactant specieID="RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_2CaN_50" id="RyR2_3CaMCa2C_2CaN_50">
    <Reactant specieID="RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_CaMRyR2Ca1_51" id="RyR2_3CaMCa2C_CaMRyR2Ca1_51">
    <Reactant specieID="RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_1CaMCa4_2CaN_52" id="RyR2_3CaMCa2C_1CaMCa4_2CaN_52">
    <Reactant specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca1_53" id="RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca1_53">
    <Reactant specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaMCa2C_2CaN_54" id="RyR2_4CaMCa2C_2CaN_54">
    <Reactant specieID="RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaMCa2C_CaMRyR2Ca1_55" id="RyR2_4CaMCa2C_CaMRyR2Ca1_55">
    <Reactant specieID="RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_CaM_56" id="RyR2_1CaM_CaM_56">
    <Reactant specieID="RyR2_1CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_CaMCa2C_57" id="RyR2_1CaM_CaMCa2C_57">
    <Reactant specieID="RyR2_1CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_CaMCa4_58" id="RyR2_1CaM_CaMCa4_58">
    <Reactant specieID="RyR2_1CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaC_59" id="RyR2_1CaM_2CaC_59">
    <Reactant specieID="RyR2_1CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_CaMRyR2Ca1_60" id="RyR2_1CaM_CaMRyR2Ca1_60">
    <Reactant specieID="RyR2_1CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa4_CaM_61" id="RyR2_1CaM_1CaMCa4_CaM_61">
    <Reactant specieID="RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa4_CaMCa2C_62" id="RyR2_1CaM_1CaMCa4_CaMCa2C_62">
    <Reactant specieID="RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa4_CaMCa4_63" id="RyR2_1CaM_1CaMCa4_CaMCa4_63">
    <Reactant specieID="RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa4_2CaC_64" id="RyR2_1CaM_1CaMCa4_2CaC_64">
    <Reactant specieID="RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa4_CaMRyR2Ca1_65" id="RyR2_1CaM_1CaMCa4_CaMRyR2Ca1_65">
    <Reactant specieID="RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa4_CaM_66" id="RyR2_1CaM_2CaMCa4_CaM_66">
    <Reactant specieID="RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa4_CaMCa2C_67" id="RyR2_1CaM_2CaMCa4_CaMCa2C_67">
    <Reactant specieID="RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa4_CaMCa4_68" id="RyR2_1CaM_2CaMCa4_CaMCa4_68">
    <Reactant specieID="RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa4_2CaC_69" id="RyR2_1CaM_2CaMCa4_2CaC_69">
    <Reactant specieID="RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa4_CaMRyR2Ca1_70" id="RyR2_1CaM_2CaMCa4_CaMRyR2Ca1_70">
    <Reactant specieID="RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa4_2CaC_71" id="RyR2_1CaM_3CaMCa4_2CaC_71">
    <Reactant specieID="RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa4_CaMRyR2Ca1_72" id="RyR2_1CaM_3CaMCa4_CaMRyR2Ca1_72">
    <Reactant specieID="RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_CaM_73" id="RyR2_1CaM_1CaMCa2C_CaM_73">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_CaMCa2C_74" id="RyR2_1CaM_1CaMCa2C_CaMCa2C_74">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_CaMCa4_75" id="RyR2_1CaM_1CaMCa2C_CaMCa4_75">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaC_76" id="RyR2_1CaM_1CaMCa2C_2CaC_76">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaN_77" id="RyR2_1CaM_1CaMCa2C_2CaN_77">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_CaMRyR2Ca1_78" id="RyR2_1CaM_1CaMCa2C_CaMRyR2Ca1_78">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_79" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_79">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_80" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_80">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_81" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_81">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_82" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_82">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_83" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_83">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_84" id="RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_84">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_85" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_85">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_86" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_86">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_87" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_87">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_CaM_88" id="RyR2_1CaM_2CaMCa2C_CaM_88">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_CaMCa2C_89" id="RyR2_1CaM_2CaMCa2C_CaMCa2C_89">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_CaMCa4_90" id="RyR2_1CaM_2CaMCa2C_CaMCa4_90">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_2CaC_91" id="RyR2_1CaM_2CaMCa2C_2CaC_91">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_2CaN_92" id="RyR2_1CaM_2CaMCa2C_2CaN_92">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_CaMRyR2Ca1_93" id="RyR2_1CaM_2CaMCa2C_CaMRyR2Ca1_93">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_94" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_94">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_95" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_95">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_96" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_96">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_2CaC_97" id="RyR2_1CaM_3CaMCa2C_2CaC_97">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_4CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_2CaN_98" id="RyR2_1CaM_3CaMCa2C_2CaN_98">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_CaMRyR2Ca1_99" id="RyR2_1CaM_3CaMCa2C_CaMRyR2Ca1_99">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_CaM_100" id="RyR2_2CaM_CaM_100">
    <Reactant specieID="RyR2_2CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_3CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_CaMCa2C_101" id="RyR2_2CaM_CaMCa2C_101">
    <Reactant specieID="RyR2_2CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_CaMCa4_102" id="RyR2_2CaM_CaMCa4_102">
    <Reactant specieID="RyR2_2CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaC_103" id="RyR2_2CaM_2CaC_103">
    <Reactant specieID="RyR2_2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_CaMRyR2Ca1_104" id="RyR2_2CaM_CaMRyR2Ca1_104">
    <Reactant specieID="RyR2_2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa4_CaM_105" id="RyR2_2CaM_1CaMCa4_CaM_105">
    <Reactant specieID="RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa4_CaMCa2C_106" id="RyR2_2CaM_1CaMCa4_CaMCa2C_106">
    <Reactant specieID="RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa4_CaMCa4_107" id="RyR2_2CaM_1CaMCa4_CaMCa4_107">
    <Reactant specieID="RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa4_2CaC_108" id="RyR2_2CaM_1CaMCa4_2CaC_108">
    <Reactant specieID="RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa4_CaMRyR2Ca1_109" id="RyR2_2CaM_1CaMCa4_CaMRyR2Ca1_109">
    <Reactant specieID="RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa4_2CaC_110" id="RyR2_2CaM_2CaMCa4_2CaC_110">
    <Reactant specieID="RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa4_CaMRyR2Ca1_111" id="RyR2_2CaM_2CaMCa4_CaMRyR2Ca1_111">
    <Reactant specieID="RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_CaM_112" id="RyR2_2CaM_1CaMCa2C_CaM_112">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_CaMCa2C_113" id="RyR2_2CaM_1CaMCa2C_CaMCa2C_113">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_CaMCa4_114" id="RyR2_2CaM_1CaMCa2C_CaMCa4_114">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_2CaC_115" id="RyR2_2CaM_1CaMCa2C_2CaC_115">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_2CaN_116" id="RyR2_2CaM_1CaMCa2C_2CaN_116">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_CaMRyR2Ca1_117" id="RyR2_2CaM_1CaMCa2C_CaMRyR2Ca1_117">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_118" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_118">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_119" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_119">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_120" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_120">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_2CaC_121" id="RyR2_2CaM_2CaMCa2C_2CaC_121">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_2CaN_122" id="RyR2_2CaM_2CaMCa2C_2CaN_122">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_CaMRyR2Ca1_123" id="RyR2_2CaM_2CaMCa2C_CaMRyR2Ca1_123">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_CaM_124" id="RyR2_3CaM_CaM_124">
    <Reactant specieID="RyR2_3CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2_4CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_CaMCa2C_125" id="RyR2_3CaM_CaMCa2C_125">
    <Reactant specieID="RyR2_3CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_CaMCa4_126" id="RyR2_3CaM_CaMCa4_126">
    <Reactant specieID="RyR2_3CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="RyR2_3CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_2CaC_127" id="RyR2_3CaM_2CaC_127">
    <Reactant specieID="RyR2_3CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_CaMRyR2Ca1_128" id="RyR2_3CaM_CaMRyR2Ca1_128">
    <Reactant specieID="RyR2_3CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaM"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa4_2CaC_129" id="RyR2_3CaM_1CaMCa4_2CaC_129">
    <Reactant specieID="RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa4_CaMRyR2Ca1_130" id="RyR2_3CaM_1CaMCa4_CaMRyR2Ca1_130">
    <Reactant specieID="RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_2CaC_131" id="RyR2_3CaM_1CaMCa2C_2CaC_131">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_2CaN_132" id="RyR2_3CaM_1CaMCa2C_2CaN_132">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_CaMRyR2Ca1_133" id="RyR2_3CaM_1CaMCa2C_CaMRyR2Ca1_133">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaM_2CaC_134" id="RyR2_4CaM_2CaC_134">
    <Reactant specieID="RyR2_4CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaM_CaMRyR2Ca1_135" id="RyR2_4CaM_CaMRyR2Ca1_135">
    <Reactant specieID="RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaM"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_CaM_136" id="Ca1_RyR2_CaM_136">
    <Reactant specieID="Ca1_RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>5.19e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_CaMCa2C_137" id="Ca1_RyR2_CaMCa2C_137">
    <Reactant specieID="Ca1_RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>7.769999999999999e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_CaMCa4_138" id="Ca1_RyR2_CaMCa4_138">
    <Reactant specieID="Ca1_RyR2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>9.044999999999999e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_RyR2Ca2_139" id="Ca1_RyR2_RyR2Ca2_139">
    <Reactant specieID="Ca1_RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>2</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa4_CaM_140" id="Ca1_RyR2_1CaMCa4_CaM_140">
    <Reactant specieID="Ca1_RyR2_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa4_CaMCa2C_141" id="Ca1_RyR2_1CaMCa4_CaMCa2C_141">
    <Reactant specieID="Ca1_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa4_CaMCa4_142" id="Ca1_RyR2_1CaMCa4_CaMCa4_142">
    <Reactant specieID="Ca1_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa4_CaMRyR2Ca2_143" id="Ca1_RyR2_1CaMCa4_CaMRyR2Ca2_143">
    <Reactant specieID="Ca1_RyR2_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa4_CaM_144" id="Ca1_RyR2_2CaMCa4_CaM_144">
    <Reactant specieID="Ca1_RyR2_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa4_CaMCa2C_145" id="Ca1_RyR2_2CaMCa4_CaMCa2C_145">
    <Reactant specieID="Ca1_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa4_CaMCa4_146" id="Ca1_RyR2_2CaMCa4_CaMCa4_146">
    <Reactant specieID="Ca1_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa4_CaMRyR2Ca2_147" id="Ca1_RyR2_2CaMCa4_CaMRyR2Ca2_147">
    <Reactant specieID="Ca1_RyR2_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa4_CaM_148" id="Ca1_RyR2_3CaMCa4_CaM_148">
    <Reactant specieID="Ca1_RyR2_3CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa4_CaMCa2C_149" id="Ca1_RyR2_3CaMCa4_CaMCa2C_149">
    <Reactant specieID="Ca1_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa4_CaMCa4_150" id="Ca1_RyR2_3CaMCa4_CaMCa4_150">
    <Reactant specieID="Ca1_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_4CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa4_CaMRyR2Ca2_151" id="Ca1_RyR2_3CaMCa4_CaMRyR2Ca2_151">
    <Reactant specieID="Ca1_RyR2_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa4_CaMRyR2Ca2_152" id="Ca1_RyR2_4CaMCa4_CaMRyR2Ca2_152">
    <Reactant specieID="Ca1_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_CaM_153" id="Ca1_RyR2_1CaMCa2C_CaM_153">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_CaMCa2C_154" id="Ca1_RyR2_1CaMCa2C_CaMCa2C_154">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_CaMCa4_155" id="Ca1_RyR2_1CaMCa2C_CaMCa4_155">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaN_156" id="Ca1_RyR2_1CaMCa2C_2CaN_156">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_CaMRyR2Ca2_157" id="Ca1_RyR2_1CaMCa2C_CaMRyR2Ca2_157">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaM_158" id="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaM_158">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_159" id="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_159">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_160" id="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_160">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_1CaMCa4_2CaN_161" id="Ca1_RyR2_1CaMCa2C_1CaMCa4_2CaN_161">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_162" id="Ca1_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_162">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaM_163" id="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaM_163">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_164" id="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_164">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_165" id="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_165">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaMCa4_2CaN_166" id="Ca1_RyR2_1CaMCa2C_2CaMCa4_2CaN_166">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_167" id="Ca1_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_167">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_3CaMCa4_2CaN_168" id="Ca1_RyR2_1CaMCa2C_3CaMCa4_2CaN_168">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_4CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca2_169" id="Ca1_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca2_169">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_CaM_170" id="Ca1_RyR2_2CaMCa2C_CaM_170">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_CaMCa2C_171" id="Ca1_RyR2_2CaMCa2C_CaMCa2C_171">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_CaMCa4_172" id="Ca1_RyR2_2CaMCa2C_CaMCa4_172">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_2CaN_173" id="Ca1_RyR2_2CaMCa2C_2CaN_173">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_CaMRyR2Ca2_174" id="Ca1_RyR2_2CaMCa2C_CaMRyR2Ca2_174">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaM_175" id="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaM_175">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_176" id="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_176">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_177" id="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_177">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_1CaMCa4_2CaN_178" id="Ca1_RyR2_2CaMCa2C_1CaMCa4_2CaN_178">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_179" id="Ca1_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_179">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_2CaMCa4_2CaN_180" id="Ca1_RyR2_2CaMCa2C_2CaMCa4_2CaN_180">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca2_181" id="Ca1_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca2_181">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_CaM_182" id="Ca1_RyR2_3CaMCa2C_CaM_182">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_CaMCa2C_183" id="Ca1_RyR2_3CaMCa2C_CaMCa2C_183">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_4CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_CaMCa4_184" id="Ca1_RyR2_3CaMCa2C_CaMCa4_184">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_2CaN_185" id="Ca1_RyR2_3CaMCa2C_2CaN_185">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_CaMRyR2Ca2_186" id="Ca1_RyR2_3CaMCa2C_CaMRyR2Ca2_186">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_1CaMCa4_2CaN_187" id="Ca1_RyR2_3CaMCa2C_1CaMCa4_2CaN_187">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca2_188" id="Ca1_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca2_188">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa2C_2CaN_189" id="Ca1_RyR2_4CaMCa2C_2CaN_189">
    <Reactant specieID="Ca1_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa2C_CaMRyR2Ca2_190" id="Ca1_RyR2_4CaMCa2C_CaMRyR2Ca2_190">
    <Reactant specieID="Ca1_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_CaM_191" id="Ca1_RyR2_1CaM_CaM_191">
    <Reactant specieID="Ca1_RyR2_1CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_CaMCa2C_192" id="Ca1_RyR2_1CaM_CaMCa2C_192">
    <Reactant specieID="Ca1_RyR2_1CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_CaMCa4_193" id="Ca1_RyR2_1CaM_CaMCa4_193">
    <Reactant specieID="Ca1_RyR2_1CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaC_194" id="Ca1_RyR2_1CaM_2CaC_194">
    <Reactant specieID="Ca1_RyR2_1CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_CaMRyR2Ca2_195" id="Ca1_RyR2_1CaM_CaMRyR2Ca2_195">
    <Reactant specieID="Ca1_RyR2_1CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa4_CaM_196" id="Ca1_RyR2_1CaM_1CaMCa4_CaM_196">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa4_CaMCa2C_197" id="Ca1_RyR2_1CaM_1CaMCa4_CaMCa2C_197">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa4_CaMCa4_198" id="Ca1_RyR2_1CaM_1CaMCa4_CaMCa4_198">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa4_2CaC_199" id="Ca1_RyR2_1CaM_1CaMCa4_2CaC_199">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa4_CaMRyR2Ca2_200" id="Ca1_RyR2_1CaM_1CaMCa4_CaMRyR2Ca2_200">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa4_CaM_201" id="Ca1_RyR2_1CaM_2CaMCa4_CaM_201">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa4_CaMCa2C_202" id="Ca1_RyR2_1CaM_2CaMCa4_CaMCa2C_202">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa4_CaMCa4_203" id="Ca1_RyR2_1CaM_2CaMCa4_CaMCa4_203">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa4_2CaC_204" id="Ca1_RyR2_1CaM_2CaMCa4_2CaC_204">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa4_CaMRyR2Ca2_205" id="Ca1_RyR2_1CaM_2CaMCa4_CaMRyR2Ca2_205">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa4_2CaC_206" id="Ca1_RyR2_1CaM_3CaMCa4_2CaC_206">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa4_CaMRyR2Ca2_207" id="Ca1_RyR2_1CaM_3CaMCa4_CaMRyR2Ca2_207">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_CaM_208" id="Ca1_RyR2_1CaM_1CaMCa2C_CaM_208">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_CaMCa2C_209" id="Ca1_RyR2_1CaM_1CaMCa2C_CaMCa2C_209">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_CaMCa4_210" id="Ca1_RyR2_1CaM_1CaMCa2C_CaMCa4_210">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaC_211" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaC_211">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaN_212" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaN_212">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca2_213" id="Ca1_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca2_213">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_214" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_214">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_215" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_215">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_216" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_216">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_217" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_217">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_218" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_218">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_219" id="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_219">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_220" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_220">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_221" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_221">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_222" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_222">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_CaM_223" id="Ca1_RyR2_1CaM_2CaMCa2C_CaM_223">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_CaMCa2C_224" id="Ca1_RyR2_1CaM_2CaMCa2C_CaMCa2C_224">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_CaMCa4_225" id="Ca1_RyR2_1CaM_2CaMCa2C_CaMCa4_225">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_2CaC_226" id="Ca1_RyR2_1CaM_2CaMCa2C_2CaC_226">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_2CaN_227" id="Ca1_RyR2_1CaM_2CaMCa2C_2CaN_227">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca2_228" id="Ca1_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca2_228">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_229" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_229">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_230" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_230">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_231" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_231">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_2CaC_232" id="Ca1_RyR2_1CaM_3CaMCa2C_2CaC_232">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_4CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_2CaN_233" id="Ca1_RyR2_1CaM_3CaMCa2C_2CaN_233">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca2_234" id="Ca1_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca2_234">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_CaM_235" id="Ca1_RyR2_2CaM_CaM_235">
    <Reactant specieID="Ca1_RyR2_2CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_3CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_CaMCa2C_236" id="Ca1_RyR2_2CaM_CaMCa2C_236">
    <Reactant specieID="Ca1_RyR2_2CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_CaMCa4_237" id="Ca1_RyR2_2CaM_CaMCa4_237">
    <Reactant specieID="Ca1_RyR2_2CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaC_238" id="Ca1_RyR2_2CaM_2CaC_238">
    <Reactant specieID="Ca1_RyR2_2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_CaMRyR2Ca2_239" id="Ca1_RyR2_2CaM_CaMRyR2Ca2_239">
    <Reactant specieID="Ca1_RyR2_2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa4_CaM_240" id="Ca1_RyR2_2CaM_1CaMCa4_CaM_240">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa4_CaMCa2C_241" id="Ca1_RyR2_2CaM_1CaMCa4_CaMCa2C_241">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa4_CaMCa4_242" id="Ca1_RyR2_2CaM_1CaMCa4_CaMCa4_242">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa4_2CaC_243" id="Ca1_RyR2_2CaM_1CaMCa4_2CaC_243">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa4_CaMRyR2Ca2_244" id="Ca1_RyR2_2CaM_1CaMCa4_CaMRyR2Ca2_244">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa4_2CaC_245" id="Ca1_RyR2_2CaM_2CaMCa4_2CaC_245">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa4_CaMRyR2Ca2_246" id="Ca1_RyR2_2CaM_2CaMCa4_CaMRyR2Ca2_246">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_CaM_247" id="Ca1_RyR2_2CaM_1CaMCa2C_CaM_247">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_CaMCa2C_248" id="Ca1_RyR2_2CaM_1CaMCa2C_CaMCa2C_248">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_CaMCa4_249" id="Ca1_RyR2_2CaM_1CaMCa2C_CaMCa4_249">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_2CaC_250" id="Ca1_RyR2_2CaM_1CaMCa2C_2CaC_250">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_2CaN_251" id="Ca1_RyR2_2CaM_1CaMCa2C_2CaN_251">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca2_252" id="Ca1_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca2_252">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_253" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_253">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_254" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_254">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_255" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_255">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_2CaC_256" id="Ca1_RyR2_2CaM_2CaMCa2C_2CaC_256">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_2CaN_257" id="Ca1_RyR2_2CaM_2CaMCa2C_2CaN_257">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca2_258" id="Ca1_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca2_258">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_CaM_259" id="Ca1_RyR2_3CaM_CaM_259">
    <Reactant specieID="Ca1_RyR2_3CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca1_RyR2_4CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_CaMCa2C_260" id="Ca1_RyR2_3CaM_CaMCa2C_260">
    <Reactant specieID="Ca1_RyR2_3CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_CaMCa4_261" id="Ca1_RyR2_3CaM_CaMCa4_261">
    <Reactant specieID="Ca1_RyR2_3CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_2CaC_262" id="Ca1_RyR2_3CaM_2CaC_262">
    <Reactant specieID="Ca1_RyR2_3CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_CaMRyR2Ca2_263" id="Ca1_RyR2_3CaM_CaMRyR2Ca2_263">
    <Reactant specieID="Ca1_RyR2_3CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaM"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa4_2CaC_264" id="Ca1_RyR2_3CaM_1CaMCa4_2CaC_264">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa4_CaMRyR2Ca2_265" id="Ca1_RyR2_3CaM_1CaMCa4_CaMRyR2Ca2_265">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_2CaC_266" id="Ca1_RyR2_3CaM_1CaMCa2C_2CaC_266">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_2CaN_267" id="Ca1_RyR2_3CaM_1CaMCa2C_2CaN_267">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca2_268" id="Ca1_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca2_268">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaM_2CaC_269" id="Ca1_RyR2_4CaM_2CaC_269">
    <Reactant specieID="Ca1_RyR2_4CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaM_CaMRyR2Ca2_270" id="Ca1_RyR2_4CaM_CaMRyR2Ca2_270">
    <Reactant specieID="Ca1_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaM"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_CaM_271" id="Ca2_RyR2_CaM_271">
    <Reactant specieID="Ca2_RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0001557</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_CaMCa2C_272" id="Ca2_RyR2_CaMCa2C_272">
    <Reactant specieID="Ca2_RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0002331</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_CaMCa4_273" id="Ca2_RyR2_CaMCa4_273">
    <Reactant specieID="Ca2_RyR2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>2.7135e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_RyR2Ca3_274" id="Ca2_RyR2_RyR2Ca3_274">
    <Reactant specieID="Ca2_RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa4_CaM_275" id="Ca2_RyR2_1CaMCa4_CaM_275">
    <Reactant specieID="Ca2_RyR2_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa4_CaMCa2C_276" id="Ca2_RyR2_1CaMCa4_CaMCa2C_276">
    <Reactant specieID="Ca2_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa4_CaMCa4_277" id="Ca2_RyR2_1CaMCa4_CaMCa4_277">
    <Reactant specieID="Ca2_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa4_CaMRyR2Ca3_278" id="Ca2_RyR2_1CaMCa4_CaMRyR2Ca3_278">
    <Reactant specieID="Ca2_RyR2_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa4_CaM_279" id="Ca2_RyR2_2CaMCa4_CaM_279">
    <Reactant specieID="Ca2_RyR2_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa4_CaMCa2C_280" id="Ca2_RyR2_2CaMCa4_CaMCa2C_280">
    <Reactant specieID="Ca2_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa4_CaMCa4_281" id="Ca2_RyR2_2CaMCa4_CaMCa4_281">
    <Reactant specieID="Ca2_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa4_CaMRyR2Ca3_282" id="Ca2_RyR2_2CaMCa4_CaMRyR2Ca3_282">
    <Reactant specieID="Ca2_RyR2_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa4_CaM_283" id="Ca2_RyR2_3CaMCa4_CaM_283">
    <Reactant specieID="Ca2_RyR2_3CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa4_CaMCa2C_284" id="Ca2_RyR2_3CaMCa4_CaMCa2C_284">
    <Reactant specieID="Ca2_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa4_CaMCa4_285" id="Ca2_RyR2_3CaMCa4_CaMCa4_285">
    <Reactant specieID="Ca2_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_4CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa4_CaMRyR2Ca3_286" id="Ca2_RyR2_3CaMCa4_CaMRyR2Ca3_286">
    <Reactant specieID="Ca2_RyR2_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa4_CaMRyR2Ca3_287" id="Ca2_RyR2_4CaMCa4_CaMRyR2Ca3_287">
    <Reactant specieID="Ca2_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_CaM_288" id="Ca2_RyR2_1CaMCa2C_CaM_288">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_CaMCa2C_289" id="Ca2_RyR2_1CaMCa2C_CaMCa2C_289">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_CaMCa4_290" id="Ca2_RyR2_1CaMCa2C_CaMCa4_290">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaN_291" id="Ca2_RyR2_1CaMCa2C_2CaN_291">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_CaMRyR2Ca3_292" id="Ca2_RyR2_1CaMCa2C_CaMRyR2Ca3_292">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaM_293" id="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaM_293">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_294" id="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_294">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_295" id="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_295">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_1CaMCa4_2CaN_296" id="Ca2_RyR2_1CaMCa2C_1CaMCa4_2CaN_296">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_297" id="Ca2_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_297">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaM_298" id="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaM_298">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_299" id="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_299">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_300" id="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_300">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaMCa4_2CaN_301" id="Ca2_RyR2_1CaMCa2C_2CaMCa4_2CaN_301">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_302" id="Ca2_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_302">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_3CaMCa4_2CaN_303" id="Ca2_RyR2_1CaMCa2C_3CaMCa4_2CaN_303">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_4CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca3_304" id="Ca2_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca3_304">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_CaM_305" id="Ca2_RyR2_2CaMCa2C_CaM_305">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_CaMCa2C_306" id="Ca2_RyR2_2CaMCa2C_CaMCa2C_306">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_CaMCa4_307" id="Ca2_RyR2_2CaMCa2C_CaMCa4_307">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_2CaN_308" id="Ca2_RyR2_2CaMCa2C_2CaN_308">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_CaMRyR2Ca3_309" id="Ca2_RyR2_2CaMCa2C_CaMRyR2Ca3_309">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaM_310" id="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaM_310">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_311" id="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_311">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_312" id="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_312">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_1CaMCa4_2CaN_313" id="Ca2_RyR2_2CaMCa2C_1CaMCa4_2CaN_313">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_314" id="Ca2_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_314">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_2CaMCa4_2CaN_315" id="Ca2_RyR2_2CaMCa2C_2CaMCa4_2CaN_315">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca3_316" id="Ca2_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca3_316">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_CaM_317" id="Ca2_RyR2_3CaMCa2C_CaM_317">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_CaMCa2C_318" id="Ca2_RyR2_3CaMCa2C_CaMCa2C_318">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_4CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_CaMCa4_319" id="Ca2_RyR2_3CaMCa2C_CaMCa4_319">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_2CaN_320" id="Ca2_RyR2_3CaMCa2C_2CaN_320">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_CaMRyR2Ca3_321" id="Ca2_RyR2_3CaMCa2C_CaMRyR2Ca3_321">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_1CaMCa4_2CaN_322" id="Ca2_RyR2_3CaMCa2C_1CaMCa4_2CaN_322">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca3_323" id="Ca2_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca3_323">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa2C_2CaN_324" id="Ca2_RyR2_4CaMCa2C_2CaN_324">
    <Reactant specieID="Ca2_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa2C_CaMRyR2Ca3_325" id="Ca2_RyR2_4CaMCa2C_CaMRyR2Ca3_325">
    <Reactant specieID="Ca2_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_CaM_326" id="Ca2_RyR2_1CaM_CaM_326">
    <Reactant specieID="Ca2_RyR2_1CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_CaMCa2C_327" id="Ca2_RyR2_1CaM_CaMCa2C_327">
    <Reactant specieID="Ca2_RyR2_1CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_CaMCa4_328" id="Ca2_RyR2_1CaM_CaMCa4_328">
    <Reactant specieID="Ca2_RyR2_1CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaC_329" id="Ca2_RyR2_1CaM_2CaC_329">
    <Reactant specieID="Ca2_RyR2_1CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_CaMRyR2Ca3_330" id="Ca2_RyR2_1CaM_CaMRyR2Ca3_330">
    <Reactant specieID="Ca2_RyR2_1CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa4_CaM_331" id="Ca2_RyR2_1CaM_1CaMCa4_CaM_331">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa4_CaMCa2C_332" id="Ca2_RyR2_1CaM_1CaMCa4_CaMCa2C_332">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa4_CaMCa4_333" id="Ca2_RyR2_1CaM_1CaMCa4_CaMCa4_333">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa4_2CaC_334" id="Ca2_RyR2_1CaM_1CaMCa4_2CaC_334">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa4_CaMRyR2Ca3_335" id="Ca2_RyR2_1CaM_1CaMCa4_CaMRyR2Ca3_335">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa4_CaM_336" id="Ca2_RyR2_1CaM_2CaMCa4_CaM_336">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa4_CaMCa2C_337" id="Ca2_RyR2_1CaM_2CaMCa4_CaMCa2C_337">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa4_CaMCa4_338" id="Ca2_RyR2_1CaM_2CaMCa4_CaMCa4_338">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa4_2CaC_339" id="Ca2_RyR2_1CaM_2CaMCa4_2CaC_339">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa4_CaMRyR2Ca3_340" id="Ca2_RyR2_1CaM_2CaMCa4_CaMRyR2Ca3_340">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa4_2CaC_341" id="Ca2_RyR2_1CaM_3CaMCa4_2CaC_341">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa4_CaMRyR2Ca3_342" id="Ca2_RyR2_1CaM_3CaMCa4_CaMRyR2Ca3_342">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_CaM_343" id="Ca2_RyR2_1CaM_1CaMCa2C_CaM_343">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_CaMCa2C_344" id="Ca2_RyR2_1CaM_1CaMCa2C_CaMCa2C_344">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_CaMCa4_345" id="Ca2_RyR2_1CaM_1CaMCa2C_CaMCa4_345">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaC_346" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaC_346">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaN_347" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaN_347">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca3_348" id="Ca2_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca3_348">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_349" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_349">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_350" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_350">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_351" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_351">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_352" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_352">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_353" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_353">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_354" id="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_354">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_355" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_355">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_356" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_356">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_357" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_357">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_CaM_358" id="Ca2_RyR2_1CaM_2CaMCa2C_CaM_358">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_CaMCa2C_359" id="Ca2_RyR2_1CaM_2CaMCa2C_CaMCa2C_359">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_CaMCa4_360" id="Ca2_RyR2_1CaM_2CaMCa2C_CaMCa4_360">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_2CaC_361" id="Ca2_RyR2_1CaM_2CaMCa2C_2CaC_361">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_2CaN_362" id="Ca2_RyR2_1CaM_2CaMCa2C_2CaN_362">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca3_363" id="Ca2_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca3_363">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_364" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_364">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_365" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_365">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_366" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_366">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_2CaC_367" id="Ca2_RyR2_1CaM_3CaMCa2C_2CaC_367">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_4CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_2CaN_368" id="Ca2_RyR2_1CaM_3CaMCa2C_2CaN_368">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca3_369" id="Ca2_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca3_369">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_CaM_370" id="Ca2_RyR2_2CaM_CaM_370">
    <Reactant specieID="Ca2_RyR2_2CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_3CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_CaMCa2C_371" id="Ca2_RyR2_2CaM_CaMCa2C_371">
    <Reactant specieID="Ca2_RyR2_2CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_CaMCa4_372" id="Ca2_RyR2_2CaM_CaMCa4_372">
    <Reactant specieID="Ca2_RyR2_2CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaC_373" id="Ca2_RyR2_2CaM_2CaC_373">
    <Reactant specieID="Ca2_RyR2_2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_CaMRyR2Ca3_374" id="Ca2_RyR2_2CaM_CaMRyR2Ca3_374">
    <Reactant specieID="Ca2_RyR2_2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa4_CaM_375" id="Ca2_RyR2_2CaM_1CaMCa4_CaM_375">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa4_CaMCa2C_376" id="Ca2_RyR2_2CaM_1CaMCa4_CaMCa2C_376">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa4_CaMCa4_377" id="Ca2_RyR2_2CaM_1CaMCa4_CaMCa4_377">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa4_2CaC_378" id="Ca2_RyR2_2CaM_1CaMCa4_2CaC_378">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa4_CaMRyR2Ca3_379" id="Ca2_RyR2_2CaM_1CaMCa4_CaMRyR2Ca3_379">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa4_2CaC_380" id="Ca2_RyR2_2CaM_2CaMCa4_2CaC_380">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa4_CaMRyR2Ca3_381" id="Ca2_RyR2_2CaM_2CaMCa4_CaMRyR2Ca3_381">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_CaM_382" id="Ca2_RyR2_2CaM_1CaMCa2C_CaM_382">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_CaMCa2C_383" id="Ca2_RyR2_2CaM_1CaMCa2C_CaMCa2C_383">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_CaMCa4_384" id="Ca2_RyR2_2CaM_1CaMCa2C_CaMCa4_384">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_2CaC_385" id="Ca2_RyR2_2CaM_1CaMCa2C_2CaC_385">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_2CaN_386" id="Ca2_RyR2_2CaM_1CaMCa2C_2CaN_386">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca3_387" id="Ca2_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca3_387">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_388" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_388">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_389" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_389">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_390" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_390">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_2CaC_391" id="Ca2_RyR2_2CaM_2CaMCa2C_2CaC_391">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_2CaN_392" id="Ca2_RyR2_2CaM_2CaMCa2C_2CaN_392">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca3_393" id="Ca2_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca3_393">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_CaM_394" id="Ca2_RyR2_3CaM_CaM_394">
    <Reactant specieID="Ca2_RyR2_3CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca2_RyR2_4CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_CaMCa2C_395" id="Ca2_RyR2_3CaM_CaMCa2C_395">
    <Reactant specieID="Ca2_RyR2_3CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_CaMCa4_396" id="Ca2_RyR2_3CaM_CaMCa4_396">
    <Reactant specieID="Ca2_RyR2_3CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_2CaC_397" id="Ca2_RyR2_3CaM_2CaC_397">
    <Reactant specieID="Ca2_RyR2_3CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_CaMRyR2Ca3_398" id="Ca2_RyR2_3CaM_CaMRyR2Ca3_398">
    <Reactant specieID="Ca2_RyR2_3CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaM"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa4_2CaC_399" id="Ca2_RyR2_3CaM_1CaMCa4_2CaC_399">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa4_CaMRyR2Ca3_400" id="Ca2_RyR2_3CaM_1CaMCa4_CaMRyR2Ca3_400">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_2CaC_401" id="Ca2_RyR2_3CaM_1CaMCa2C_2CaC_401">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_2CaN_402" id="Ca2_RyR2_3CaM_1CaMCa2C_2CaN_402">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca3_403" id="Ca2_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca3_403">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaM_2CaC_404" id="Ca2_RyR2_4CaM_2CaC_404">
    <Reactant specieID="Ca2_RyR2_4CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaM_CaMRyR2Ca3_405" id="Ca2_RyR2_4CaM_CaMRyR2Ca3_405">
    <Reactant specieID="Ca2_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaM"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_CaM_406" id="Ca3_RyR2_CaM_406">
    <Reactant specieID="Ca3_RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0004671</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_CaMCa2C_407" id="Ca3_RyR2_CaMCa2C_407">
    <Reactant specieID="Ca3_RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0006993</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_CaMCa4_408" id="Ca3_RyR2_CaMCa4_408">
    <Reactant specieID="Ca3_RyR2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>8.1405e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_RyR2Ca4_409" id="Ca3_RyR2_RyR2Ca4_409">
    <Reactant specieID="Ca3_RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>4</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa4_CaM_410" id="Ca3_RyR2_1CaMCa4_CaM_410">
    <Reactant specieID="Ca3_RyR2_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa4_CaMCa2C_411" id="Ca3_RyR2_1CaMCa4_CaMCa2C_411">
    <Reactant specieID="Ca3_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa4_CaMCa4_412" id="Ca3_RyR2_1CaMCa4_CaMCa4_412">
    <Reactant specieID="Ca3_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa4_CaMRyR2Ca4_413" id="Ca3_RyR2_1CaMCa4_CaMRyR2Ca4_413">
    <Reactant specieID="Ca3_RyR2_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa4_CaM_414" id="Ca3_RyR2_2CaMCa4_CaM_414">
    <Reactant specieID="Ca3_RyR2_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa4_CaMCa2C_415" id="Ca3_RyR2_2CaMCa4_CaMCa2C_415">
    <Reactant specieID="Ca3_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa4_CaMCa4_416" id="Ca3_RyR2_2CaMCa4_CaMCa4_416">
    <Reactant specieID="Ca3_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa4_CaMRyR2Ca4_417" id="Ca3_RyR2_2CaMCa4_CaMRyR2Ca4_417">
    <Reactant specieID="Ca3_RyR2_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa4_CaM_418" id="Ca3_RyR2_3CaMCa4_CaM_418">
    <Reactant specieID="Ca3_RyR2_3CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa4_CaMCa2C_419" id="Ca3_RyR2_3CaMCa4_CaMCa2C_419">
    <Reactant specieID="Ca3_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa4_CaMCa4_420" id="Ca3_RyR2_3CaMCa4_CaMCa4_420">
    <Reactant specieID="Ca3_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_4CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa4_CaMRyR2Ca4_421" id="Ca3_RyR2_3CaMCa4_CaMRyR2Ca4_421">
    <Reactant specieID="Ca3_RyR2_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa4_CaMRyR2Ca4_422" id="Ca3_RyR2_4CaMCa4_CaMRyR2Ca4_422">
    <Reactant specieID="Ca3_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_CaM_423" id="Ca3_RyR2_1CaMCa2C_CaM_423">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_CaMCa2C_424" id="Ca3_RyR2_1CaMCa2C_CaMCa2C_424">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_CaMCa4_425" id="Ca3_RyR2_1CaMCa2C_CaMCa4_425">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaN_426" id="Ca3_RyR2_1CaMCa2C_2CaN_426">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_CaMRyR2Ca4_427" id="Ca3_RyR2_1CaMCa2C_CaMRyR2Ca4_427">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaM_428" id="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaM_428">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_429" id="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_429">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_430" id="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_430">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_1CaMCa4_2CaN_431" id="Ca3_RyR2_1CaMCa2C_1CaMCa4_2CaN_431">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_432" id="Ca3_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_432">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaM_433" id="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaM_433">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_434" id="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_434">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_435" id="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_435">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaMCa4_2CaN_436" id="Ca3_RyR2_1CaMCa2C_2CaMCa4_2CaN_436">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_437" id="Ca3_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_437">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_3CaMCa4_2CaN_438" id="Ca3_RyR2_1CaMCa2C_3CaMCa4_2CaN_438">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_4CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4_439" id="Ca3_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4_439">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_CaM_440" id="Ca3_RyR2_2CaMCa2C_CaM_440">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_CaMCa2C_441" id="Ca3_RyR2_2CaMCa2C_CaMCa2C_441">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_CaMCa4_442" id="Ca3_RyR2_2CaMCa2C_CaMCa4_442">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_2CaN_443" id="Ca3_RyR2_2CaMCa2C_2CaN_443">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_CaMRyR2Ca4_444" id="Ca3_RyR2_2CaMCa2C_CaMRyR2Ca4_444">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaM_445" id="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaM_445">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_446" id="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_446">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_447" id="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_447">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_1CaMCa4_2CaN_448" id="Ca3_RyR2_2CaMCa2C_1CaMCa4_2CaN_448">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_449" id="Ca3_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_449">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_2CaMCa4_2CaN_450" id="Ca3_RyR2_2CaMCa2C_2CaMCa4_2CaN_450">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4_451" id="Ca3_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4_451">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_CaM_452" id="Ca3_RyR2_3CaMCa2C_CaM_452">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_CaMCa2C_453" id="Ca3_RyR2_3CaMCa2C_CaMCa2C_453">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_4CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_CaMCa4_454" id="Ca3_RyR2_3CaMCa2C_CaMCa4_454">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_2CaN_455" id="Ca3_RyR2_3CaMCa2C_2CaN_455">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_CaMRyR2Ca4_456" id="Ca3_RyR2_3CaMCa2C_CaMRyR2Ca4_456">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_1CaMCa4_2CaN_457" id="Ca3_RyR2_3CaMCa2C_1CaMCa4_2CaN_457">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4_458" id="Ca3_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4_458">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa2C_2CaN_459" id="Ca3_RyR2_4CaMCa2C_2CaN_459">
    <Reactant specieID="Ca3_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa2C_CaMRyR2Ca4_460" id="Ca3_RyR2_4CaMCa2C_CaMRyR2Ca4_460">
    <Reactant specieID="Ca3_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_CaM_461" id="Ca3_RyR2_1CaM_CaM_461">
    <Reactant specieID="Ca3_RyR2_1CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_CaMCa2C_462" id="Ca3_RyR2_1CaM_CaMCa2C_462">
    <Reactant specieID="Ca3_RyR2_1CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_CaMCa4_463" id="Ca3_RyR2_1CaM_CaMCa4_463">
    <Reactant specieID="Ca3_RyR2_1CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaC_464" id="Ca3_RyR2_1CaM_2CaC_464">
    <Reactant specieID="Ca3_RyR2_1CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_CaMRyR2Ca4_465" id="Ca3_RyR2_1CaM_CaMRyR2Ca4_465">
    <Reactant specieID="Ca3_RyR2_1CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa4_CaM_466" id="Ca3_RyR2_1CaM_1CaMCa4_CaM_466">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa4_CaMCa2C_467" id="Ca3_RyR2_1CaM_1CaMCa4_CaMCa2C_467">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa4_CaMCa4_468" id="Ca3_RyR2_1CaM_1CaMCa4_CaMCa4_468">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa4_2CaC_469" id="Ca3_RyR2_1CaM_1CaMCa4_2CaC_469">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4_470" id="Ca3_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4_470">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa4_CaM_471" id="Ca3_RyR2_1CaM_2CaMCa4_CaM_471">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa4_CaMCa2C_472" id="Ca3_RyR2_1CaM_2CaMCa4_CaMCa2C_472">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa4_CaMCa4_473" id="Ca3_RyR2_1CaM_2CaMCa4_CaMCa4_473">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa4_2CaC_474" id="Ca3_RyR2_1CaM_2CaMCa4_2CaC_474">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4_475" id="Ca3_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4_475">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa4_2CaC_476" id="Ca3_RyR2_1CaM_3CaMCa4_2CaC_476">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4_477" id="Ca3_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4_477">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_CaM_478" id="Ca3_RyR2_1CaM_1CaMCa2C_CaM_478">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_CaMCa2C_479" id="Ca3_RyR2_1CaM_1CaMCa2C_CaMCa2C_479">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_CaMCa4_480" id="Ca3_RyR2_1CaM_1CaMCa2C_CaMCa4_480">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaC_481" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaC_481">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaN_482" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaN_482">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4_483" id="Ca3_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4_483">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_484" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_484">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_485" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_485">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_486" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_486">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_487" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_487">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_488" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_488">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_489" id="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_489">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_490" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_490">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_491" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_491">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_492" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_492">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_CaM_493" id="Ca3_RyR2_1CaM_2CaMCa2C_CaM_493">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_CaMCa2C_494" id="Ca3_RyR2_1CaM_2CaMCa2C_CaMCa2C_494">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_CaMCa4_495" id="Ca3_RyR2_1CaM_2CaMCa2C_CaMCa4_495">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_2CaC_496" id="Ca3_RyR2_1CaM_2CaMCa2C_2CaC_496">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_2CaN_497" id="Ca3_RyR2_1CaM_2CaMCa2C_2CaN_497">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4_498" id="Ca3_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4_498">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_499" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_499">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_500" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_500">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_501" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_501">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_2CaC_502" id="Ca3_RyR2_1CaM_3CaMCa2C_2CaC_502">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_4CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_2CaN_503" id="Ca3_RyR2_1CaM_3CaMCa2C_2CaN_503">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4_504" id="Ca3_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4_504">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_CaM_505" id="Ca3_RyR2_2CaM_CaM_505">
    <Reactant specieID="Ca3_RyR2_2CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_3CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_CaMCa2C_506" id="Ca3_RyR2_2CaM_CaMCa2C_506">
    <Reactant specieID="Ca3_RyR2_2CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_CaMCa4_507" id="Ca3_RyR2_2CaM_CaMCa4_507">
    <Reactant specieID="Ca3_RyR2_2CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaC_508" id="Ca3_RyR2_2CaM_2CaC_508">
    <Reactant specieID="Ca3_RyR2_2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_CaMRyR2Ca4_509" id="Ca3_RyR2_2CaM_CaMRyR2Ca4_509">
    <Reactant specieID="Ca3_RyR2_2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa4_CaM_510" id="Ca3_RyR2_2CaM_1CaMCa4_CaM_510">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa4_CaMCa2C_511" id="Ca3_RyR2_2CaM_1CaMCa4_CaMCa2C_511">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa4_CaMCa4_512" id="Ca3_RyR2_2CaM_1CaMCa4_CaMCa4_512">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa4_2CaC_513" id="Ca3_RyR2_2CaM_1CaMCa4_2CaC_513">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4_514" id="Ca3_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4_514">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa4_2CaC_515" id="Ca3_RyR2_2CaM_2CaMCa4_2CaC_515">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4_516" id="Ca3_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4_516">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_CaM_517" id="Ca3_RyR2_2CaM_1CaMCa2C_CaM_517">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_CaMCa2C_518" id="Ca3_RyR2_2CaM_1CaMCa2C_CaMCa2C_518">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_CaMCa4_519" id="Ca3_RyR2_2CaM_1CaMCa2C_CaMCa4_519">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_2CaC_520" id="Ca3_RyR2_2CaM_1CaMCa2C_2CaC_520">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_2CaN_521" id="Ca3_RyR2_2CaM_1CaMCa2C_2CaN_521">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4_522" id="Ca3_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4_522">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_523" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_523">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_524" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_524">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_525" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_525">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_2CaC_526" id="Ca3_RyR2_2CaM_2CaMCa2C_2CaC_526">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_2CaN_527" id="Ca3_RyR2_2CaM_2CaMCa2C_2CaN_527">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4_528" id="Ca3_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4_528">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_CaM_529" id="Ca3_RyR2_3CaM_CaM_529">
    <Reactant specieID="Ca3_RyR2_3CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca3_RyR2_4CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_CaMCa2C_530" id="Ca3_RyR2_3CaM_CaMCa2C_530">
    <Reactant specieID="Ca3_RyR2_3CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_CaMCa4_531" id="Ca3_RyR2_3CaM_CaMCa4_531">
    <Reactant specieID="Ca3_RyR2_3CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_2CaC_532" id="Ca3_RyR2_3CaM_2CaC_532">
    <Reactant specieID="Ca3_RyR2_3CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_CaMRyR2Ca4_533" id="Ca3_RyR2_3CaM_CaMRyR2Ca4_533">
    <Reactant specieID="Ca3_RyR2_3CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa4_2CaC_534" id="Ca3_RyR2_3CaM_1CaMCa4_2CaC_534">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4_535" id="Ca3_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4_535">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_2CaC_536" id="Ca3_RyR2_3CaM_1CaMCa2C_2CaC_536">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_2CaN_537" id="Ca3_RyR2_3CaM_1CaMCa2C_2CaN_537">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4_538" id="Ca3_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4_538">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaM_2CaC_539" id="Ca3_RyR2_4CaM_2CaC_539">
    <Reactant specieID="Ca3_RyR2_4CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaM_CaMRyR2Ca4_540" id="Ca3_RyR2_4CaM_CaMRyR2Ca4_540">
    <Reactant specieID="Ca3_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_CaM_541" id="Ca4_RyR2_CaM_541">
    <Reactant specieID="Ca4_RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0014013</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_CaMCa2C_542" id="Ca4_RyR2_CaMCa2C_542">
    <Reactant specieID="Ca4_RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0020978999999999998</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_CaMCa4_543" id="Ca4_RyR2_CaMCa4_543">
    <Reactant specieID="Ca4_RyR2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>0.000244215</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O1_CaM_544" id="Ca4_RyR2_O1_CaM_544">
    <Reactant specieID="Ca4_RyR2_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0014013</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O1_CaMCa2C_545" id="Ca4_RyR2_O1_CaMCa2C_545">
    <Reactant specieID="Ca4_RyR2_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0020978999999999998</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O1_CaMCa4_546" id="Ca4_RyR2_O1_CaMCa4_546">
    <Reactant specieID="Ca4_RyR2_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>0.000244215</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O2_CaM_547" id="Ca4_RyR2_O2_CaM_547">
    <Reactant specieID="Ca4_RyR2_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0014013</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O2_CaMCa2C_548" id="Ca4_RyR2_O2_CaMCa2C_548">
    <Reactant specieID="Ca4_RyR2_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0020978999999999998</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O2_CaMCa4_549" id="Ca4_RyR2_O2_CaMCa4_549">
    <Reactant specieID="Ca4_RyR2_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>0.000244215</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_C1_CaM_550" id="Ca4_RyR2_C1_CaM_550">
    <Reactant specieID="Ca4_RyR2_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0014013</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_C1_CaMCa2C_551" id="Ca4_RyR2_C1_CaMCa2C_551">
    <Reactant specieID="Ca4_RyR2_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0020978999999999998</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_C1_CaMCa4_552" id="Ca4_RyR2_C1_CaMCa4_552">
    <Reactant specieID="Ca4_RyR2_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>0.000244215</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_I_CaM_553" id="Ca4_RyR2_I_CaM_553">
    <Reactant specieID="Ca4_RyR2_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>0.0014013</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_I_CaMCa2C_554" id="Ca4_RyR2_I_CaMCa2C_554">
    <Reactant specieID="Ca4_RyR2_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>0.0020978999999999998</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_I_CaMCa4_555" id="Ca4_RyR2_I_CaMCa4_555">
    <Reactant specieID="Ca4_RyR2_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>0.000244215</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_CaM_556" id="Ca4_RyR2_1CaMCa4_CaM_556">
    <Reactant specieID="Ca4_RyR2_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_CaMCa2C_557" id="Ca4_RyR2_1CaMCa4_CaMCa2C_557">
    <Reactant specieID="Ca4_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_CaMCa4_558" id="Ca4_RyR2_1CaMCa4_CaMCa4_558">
    <Reactant specieID="Ca4_RyR2_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_CaM_559" id="Ca4_RyR2_1CaMCa4_O1_CaM_559">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_CaMCa2C_560" id="Ca4_RyR2_1CaMCa4_O1_CaMCa2C_560">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_CaMCa4_561" id="Ca4_RyR2_1CaMCa4_O1_CaMCa4_561">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_CaM_562" id="Ca4_RyR2_1CaMCa4_O2_CaM_562">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_CaMCa2C_563" id="Ca4_RyR2_1CaMCa4_O2_CaMCa2C_563">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_CaMCa4_564" id="Ca4_RyR2_1CaMCa4_O2_CaMCa4_564">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_C1_CaM_565" id="Ca4_RyR2_1CaMCa4_C1_CaM_565">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_C1_CaMCa2C_566" id="Ca4_RyR2_1CaMCa4_C1_CaMCa2C_566">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_C1_CaMCa4_567" id="Ca4_RyR2_1CaMCa4_C1_CaMCa4_567">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_I_CaM_568" id="Ca4_RyR2_1CaMCa4_I_CaM_568">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_I_CaMCa2C_569" id="Ca4_RyR2_1CaMCa4_I_CaMCa2C_569">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_I_CaMCa4_570" id="Ca4_RyR2_1CaMCa4_I_CaMCa4_570">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_CaM_571" id="Ca4_RyR2_2CaMCa4_CaM_571">
    <Reactant specieID="Ca4_RyR2_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_CaMCa2C_572" id="Ca4_RyR2_2CaMCa4_CaMCa2C_572">
    <Reactant specieID="Ca4_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_CaMCa4_573" id="Ca4_RyR2_2CaMCa4_CaMCa4_573">
    <Reactant specieID="Ca4_RyR2_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_CaM_574" id="Ca4_RyR2_2CaMCa4_O1_CaM_574">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_CaMCa2C_575" id="Ca4_RyR2_2CaMCa4_O1_CaMCa2C_575">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_CaMCa4_576" id="Ca4_RyR2_2CaMCa4_O1_CaMCa4_576">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_CaM_577" id="Ca4_RyR2_2CaMCa4_O2_CaM_577">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_CaMCa2C_578" id="Ca4_RyR2_2CaMCa4_O2_CaMCa2C_578">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_CaMCa4_579" id="Ca4_RyR2_2CaMCa4_O2_CaMCa4_579">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_C1_CaM_580" id="Ca4_RyR2_2CaMCa4_C1_CaM_580">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_C1_CaMCa2C_581" id="Ca4_RyR2_2CaMCa4_C1_CaMCa2C_581">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_C1_CaMCa4_582" id="Ca4_RyR2_2CaMCa4_C1_CaMCa4_582">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_I_CaM_583" id="Ca4_RyR2_2CaMCa4_I_CaM_583">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_I_CaMCa2C_584" id="Ca4_RyR2_2CaMCa4_I_CaMCa2C_584">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_I_CaMCa4_585" id="Ca4_RyR2_2CaMCa4_I_CaMCa4_585">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_CaM_586" id="Ca4_RyR2_3CaMCa4_CaM_586">
    <Reactant specieID="Ca4_RyR2_3CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_CaMCa2C_587" id="Ca4_RyR2_3CaMCa4_CaMCa2C_587">
    <Reactant specieID="Ca4_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_CaMCa4_588" id="Ca4_RyR2_3CaMCa4_CaMCa4_588">
    <Reactant specieID="Ca4_RyR2_3CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_CaM_589" id="Ca4_RyR2_3CaMCa4_O1_CaM_589">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_CaMCa2C_590" id="Ca4_RyR2_3CaMCa4_O1_CaMCa2C_590">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_CaMCa4_591" id="Ca4_RyR2_3CaMCa4_O1_CaMCa4_591">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_CaM_592" id="Ca4_RyR2_3CaMCa4_O2_CaM_592">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_CaMCa2C_593" id="Ca4_RyR2_3CaMCa4_O2_CaMCa2C_593">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_CaMCa4_594" id="Ca4_RyR2_3CaMCa4_O2_CaMCa4_594">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_C1_CaM_595" id="Ca4_RyR2_3CaMCa4_C1_CaM_595">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_C1_CaMCa2C_596" id="Ca4_RyR2_3CaMCa4_C1_CaMCa2C_596">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_C1_CaMCa4_597" id="Ca4_RyR2_3CaMCa4_C1_CaMCa4_597">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_I_CaM_598" id="Ca4_RyR2_3CaMCa4_I_CaM_598">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_I_CaMCa2C_599" id="Ca4_RyR2_3CaMCa4_I_CaMCa2C_599">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_I_CaMCa4_600" id="Ca4_RyR2_3CaMCa4_I_CaMCa4_600">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_CaM_601" id="Ca4_RyR2_1CaMCa2C_CaM_601">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_CaMCa2C_602" id="Ca4_RyR2_1CaMCa2C_CaMCa2C_602">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_CaMCa4_603" id="Ca4_RyR2_1CaMCa2C_CaMCa4_603">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_CaM_604" id="Ca4_RyR2_1CaMCa2C_O1_CaM_604">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_CaMCa2C_605" id="Ca4_RyR2_1CaMCa2C_O1_CaMCa2C_605">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_CaMCa4_606" id="Ca4_RyR2_1CaMCa2C_O1_CaMCa4_606">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_CaM_607" id="Ca4_RyR2_1CaMCa2C_O2_CaM_607">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_CaMCa2C_608" id="Ca4_RyR2_1CaMCa2C_O2_CaMCa2C_608">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_CaMCa4_609" id="Ca4_RyR2_1CaMCa2C_O2_CaMCa4_609">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_C1_CaM_610" id="Ca4_RyR2_1CaMCa2C_C1_CaM_610">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_C1_CaMCa2C_611" id="Ca4_RyR2_1CaMCa2C_C1_CaMCa2C_611">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_C1_CaMCa4_612" id="Ca4_RyR2_1CaMCa2C_C1_CaMCa4_612">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_I_CaM_613" id="Ca4_RyR2_1CaMCa2C_I_CaM_613">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_I_CaMCa2C_614" id="Ca4_RyR2_1CaMCa2C_I_CaMCa2C_614">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_I_CaMCa4_615" id="Ca4_RyR2_1CaMCa2C_I_CaMCa4_615">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaN_616" id="Ca4_RyR2_1CaMCa2C_2CaN_616">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_2CaN_617" id="Ca4_RyR2_1CaMCa2C_O1_2CaN_617">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_2CaN_618" id="Ca4_RyR2_1CaMCa2C_O2_2CaN_618">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_C1_2CaN_619" id="Ca4_RyR2_1CaMCa2C_C1_2CaN_619">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_I_2CaN_620" id="Ca4_RyR2_1CaMCa2C_I_2CaN_620">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaM_621" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaM_621">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_622" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMCa2C_622">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_623" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMCa4_623">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaM_624" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaM_624">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMCa2C_625" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMCa2C_625">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMCa4_626" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMCa4_626">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaM_627" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaM_627">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMCa2C_628" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMCa2C_628">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMCa4_629" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMCa4_629">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaM_630" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaM_630">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMCa2C_631" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMCa2C_631">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMCa4_632" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMCa4_632">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaM_633" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaM_633">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaMCa2C_634" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaMCa2C_634">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaMCa4_635" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_CaMCa4_635">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_2CaN_636" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_2CaN_636">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_2CaN_637" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_2CaN_637">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_2CaN_638" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_2CaN_638">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_2CaN_639" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_2CaN_639">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_2CaN_640" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_I_2CaN_640">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaM_641" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaM_641">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_642" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMCa2C_642">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_643" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMCa4_643">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaM_644" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaM_644">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMCa2C_645" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMCa2C_645">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMCa4_646" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMCa4_646">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaM_647" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaM_647">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMCa2C_648" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMCa2C_648">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMCa4_649" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMCa4_649">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaM_650" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaM_650">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMCa2C_651" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMCa2C_651">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMCa4_652" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMCa4_652">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaM_653" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaM_653">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaMCa2C_654" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaMCa2C_654">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaMCa4_655" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_CaMCa4_655">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_2CaN_656" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_2CaN_656">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_2CaN_657" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_2CaN_657">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_2CaN_658" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_2CaN_658">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_2CaN_659" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_2CaN_659">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_2CaN_660" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_I_2CaN_660">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_2CaN_661" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_2CaN_661">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_2CaN_662" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_2CaN_662">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_2CaN_663" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_2CaN_663">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_2CaN_664" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_2CaN_664">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I_2CaN_665" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I_2CaN_665">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_CaM_666" id="Ca4_RyR2_2CaMCa2C_CaM_666">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_CaMCa2C_667" id="Ca4_RyR2_2CaMCa2C_CaMCa2C_667">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_CaMCa4_668" id="Ca4_RyR2_2CaMCa2C_CaMCa4_668">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_CaM_669" id="Ca4_RyR2_2CaMCa2C_O1_CaM_669">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_CaMCa2C_670" id="Ca4_RyR2_2CaMCa2C_O1_CaMCa2C_670">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_CaMCa4_671" id="Ca4_RyR2_2CaMCa2C_O1_CaMCa4_671">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_CaM_672" id="Ca4_RyR2_2CaMCa2C_O2_CaM_672">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_CaMCa2C_673" id="Ca4_RyR2_2CaMCa2C_O2_CaMCa2C_673">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_CaMCa4_674" id="Ca4_RyR2_2CaMCa2C_O2_CaMCa4_674">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_C1_CaM_675" id="Ca4_RyR2_2CaMCa2C_C1_CaM_675">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_C1_CaMCa2C_676" id="Ca4_RyR2_2CaMCa2C_C1_CaMCa2C_676">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_C1_CaMCa4_677" id="Ca4_RyR2_2CaMCa2C_C1_CaMCa4_677">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_I_CaM_678" id="Ca4_RyR2_2CaMCa2C_I_CaM_678">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_I_CaMCa2C_679" id="Ca4_RyR2_2CaMCa2C_I_CaMCa2C_679">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_I_CaMCa4_680" id="Ca4_RyR2_2CaMCa2C_I_CaMCa4_680">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaN_681" id="Ca4_RyR2_2CaMCa2C_2CaN_681">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_2CaN_682" id="Ca4_RyR2_2CaMCa2C_O1_2CaN_682">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_2CaN_683" id="Ca4_RyR2_2CaMCa2C_O2_2CaN_683">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_C1_2CaN_684" id="Ca4_RyR2_2CaMCa2C_C1_2CaN_684">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_I_2CaN_685" id="Ca4_RyR2_2CaMCa2C_I_2CaN_685">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaM_686" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaM_686">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_687" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMCa2C_687">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_688" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMCa4_688">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaM_689" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaM_689">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMCa2C_690" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMCa2C_690">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMCa4_691" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMCa4_691">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaM_692" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaM_692">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMCa2C_693" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMCa2C_693">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMCa4_694" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMCa4_694">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaM_695" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaM_695">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMCa2C_696" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMCa2C_696">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMCa4_697" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMCa4_697">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaM_698" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaM_698">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaMCa2C_699" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaMCa2C_699">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaMCa4_700" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_CaMCa4_700">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_2CaN_701" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_2CaN_701">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_2CaN_702" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_2CaN_702">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_2CaN_703" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_2CaN_703">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_2CaN_704" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_2CaN_704">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_2CaN_705" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_I_2CaN_705">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_2CaN_706" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_2CaN_706">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_2CaN_707" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_2CaN_707">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_2CaN_708" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_2CaN_708">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_2CaN_709" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_2CaN_709">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I_2CaN_710" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I_2CaN_710">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_CaM_711" id="Ca4_RyR2_3CaMCa2C_CaM_711">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_CaMCa2C_712" id="Ca4_RyR2_3CaMCa2C_CaMCa2C_712">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_CaMCa4_713" id="Ca4_RyR2_3CaMCa2C_CaMCa4_713">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_CaM_714" id="Ca4_RyR2_3CaMCa2C_O1_CaM_714">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_CaMCa2C_715" id="Ca4_RyR2_3CaMCa2C_O1_CaMCa2C_715">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_CaMCa4_716" id="Ca4_RyR2_3CaMCa2C_O1_CaMCa4_716">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_CaM_717" id="Ca4_RyR2_3CaMCa2C_O2_CaM_717">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_CaMCa2C_718" id="Ca4_RyR2_3CaMCa2C_O2_CaMCa2C_718">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_CaMCa4_719" id="Ca4_RyR2_3CaMCa2C_O2_CaMCa4_719">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_C1_CaM_720" id="Ca4_RyR2_3CaMCa2C_C1_CaM_720">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_C1_CaMCa2C_721" id="Ca4_RyR2_3CaMCa2C_C1_CaMCa2C_721">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_C1_CaMCa4_722" id="Ca4_RyR2_3CaMCa2C_C1_CaMCa4_722">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_I_CaM_723" id="Ca4_RyR2_3CaMCa2C_I_CaM_723">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_I_CaMCa2C_724" id="Ca4_RyR2_3CaMCa2C_I_CaMCa2C_724">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_I_CaMCa4_725" id="Ca4_RyR2_3CaMCa2C_I_CaMCa4_725">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_2CaN_726" id="Ca4_RyR2_3CaMCa2C_2CaN_726">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_2CaN_727" id="Ca4_RyR2_3CaMCa2C_O1_2CaN_727">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_2CaN_728" id="Ca4_RyR2_3CaMCa2C_O2_2CaN_728">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_C1_2CaN_729" id="Ca4_RyR2_3CaMCa2C_C1_2CaN_729">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_I_2CaN_730" id="Ca4_RyR2_3CaMCa2C_I_2CaN_730">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_2CaN_731" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_2CaN_731">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_2CaN_732" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_2CaN_732">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_2CaN_733" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_2CaN_733">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_2CaN_734" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_2CaN_734">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I_2CaN_735" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I_2CaN_735">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_2CaN_736" id="Ca4_RyR2_4CaMCa2C_2CaN_736">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_2CaN_737" id="Ca4_RyR2_4CaMCa2C_O1_2CaN_737">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_2CaN_738" id="Ca4_RyR2_4CaMCa2C_O2_2CaN_738">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_C1_2CaN_739" id="Ca4_RyR2_4CaMCa2C_C1_2CaN_739">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_I_2CaN_740" id="Ca4_RyR2_4CaMCa2C_I_2CaN_740">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_CaM_741" id="Ca4_RyR2_1CaM_CaM_741">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_CaMCa2C_742" id="Ca4_RyR2_1CaM_CaMCa2C_742">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_CaMCa4_743" id="Ca4_RyR2_1CaM_CaMCa4_743">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_CaM_744" id="Ca4_RyR2_1CaM_O1_CaM_744">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_CaMCa2C_745" id="Ca4_RyR2_1CaM_O1_CaMCa2C_745">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_CaMCa4_746" id="Ca4_RyR2_1CaM_O1_CaMCa4_746">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_CaM_747" id="Ca4_RyR2_1CaM_O2_CaM_747">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_CaMCa2C_748" id="Ca4_RyR2_1CaM_O2_CaMCa2C_748">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_CaMCa4_749" id="Ca4_RyR2_1CaM_O2_CaMCa4_749">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_C1_CaM_750" id="Ca4_RyR2_1CaM_C1_CaM_750">
    <Reactant specieID="Ca4_RyR2_1CaM_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_C1_CaMCa2C_751" id="Ca4_RyR2_1CaM_C1_CaMCa2C_751">
    <Reactant specieID="Ca4_RyR2_1CaM_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_C1_CaMCa4_752" id="Ca4_RyR2_1CaM_C1_CaMCa4_752">
    <Reactant specieID="Ca4_RyR2_1CaM_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_I_CaM_753" id="Ca4_RyR2_1CaM_I_CaM_753">
    <Reactant specieID="Ca4_RyR2_1CaM_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_I_CaMCa2C_754" id="Ca4_RyR2_1CaM_I_CaMCa2C_754">
    <Reactant specieID="Ca4_RyR2_1CaM_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_I_CaMCa4_755" id="Ca4_RyR2_1CaM_I_CaMCa4_755">
    <Reactant specieID="Ca4_RyR2_1CaM_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaC_756" id="Ca4_RyR2_1CaM_2CaC_756">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_2CaC_757" id="Ca4_RyR2_1CaM_O1_2CaC_757">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_2CaC_758" id="Ca4_RyR2_1CaM_O2_2CaC_758">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_C1_2CaC_759" id="Ca4_RyR2_1CaM_C1_2CaC_759">
    <Reactant specieID="Ca4_RyR2_1CaM_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_I_2CaC_760" id="Ca4_RyR2_1CaM_I_2CaC_760">
    <Reactant specieID="Ca4_RyR2_1CaM_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_CaM_761" id="Ca4_RyR2_1CaM_1CaMCa4_CaM_761">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_CaMCa2C_762" id="Ca4_RyR2_1CaM_1CaMCa4_CaMCa2C_762">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_CaMCa4_763" id="Ca4_RyR2_1CaM_1CaMCa4_CaMCa4_763">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_CaM_764" id="Ca4_RyR2_1CaM_1CaMCa4_O1_CaM_764">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMCa2C_765" id="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMCa2C_765">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMCa4_766" id="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMCa4_766">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_CaM_767" id="Ca4_RyR2_1CaM_1CaMCa4_O2_CaM_767">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMCa2C_768" id="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMCa2C_768">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMCa4_769" id="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMCa4_769">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_C1_CaM_770" id="Ca4_RyR2_1CaM_1CaMCa4_C1_CaM_770">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMCa2C_771" id="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMCa2C_771">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMCa4_772" id="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMCa4_772">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_I_CaM_773" id="Ca4_RyR2_1CaM_1CaMCa4_I_CaM_773">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_I_CaMCa2C_774" id="Ca4_RyR2_1CaM_1CaMCa4_I_CaMCa2C_774">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_I_CaMCa4_775" id="Ca4_RyR2_1CaM_1CaMCa4_I_CaMCa4_775">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_2CaC_776" id="Ca4_RyR2_1CaM_1CaMCa4_2CaC_776">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_2CaC_777" id="Ca4_RyR2_1CaM_1CaMCa4_O1_2CaC_777">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_2CaC_778" id="Ca4_RyR2_1CaM_1CaMCa4_O2_2CaC_778">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_C1_2CaC_779" id="Ca4_RyR2_1CaM_1CaMCa4_C1_2CaC_779">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_I_2CaC_780" id="Ca4_RyR2_1CaM_1CaMCa4_I_2CaC_780">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_CaM_781" id="Ca4_RyR2_1CaM_2CaMCa4_CaM_781">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_CaMCa2C_782" id="Ca4_RyR2_1CaM_2CaMCa4_CaMCa2C_782">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_CaMCa4_783" id="Ca4_RyR2_1CaM_2CaMCa4_CaMCa4_783">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_CaM_784" id="Ca4_RyR2_1CaM_2CaMCa4_O1_CaM_784">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMCa2C_785" id="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMCa2C_785">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMCa4_786" id="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMCa4_786">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_CaM_787" id="Ca4_RyR2_1CaM_2CaMCa4_O2_CaM_787">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMCa2C_788" id="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMCa2C_788">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMCa4_789" id="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMCa4_789">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_C1_CaM_790" id="Ca4_RyR2_1CaM_2CaMCa4_C1_CaM_790">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMCa2C_791" id="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMCa2C_791">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMCa4_792" id="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMCa4_792">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_I_CaM_793" id="Ca4_RyR2_1CaM_2CaMCa4_I_CaM_793">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_I_CaMCa2C_794" id="Ca4_RyR2_1CaM_2CaMCa4_I_CaMCa2C_794">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_I_CaMCa4_795" id="Ca4_RyR2_1CaM_2CaMCa4_I_CaMCa4_795">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_2CaC_796" id="Ca4_RyR2_1CaM_2CaMCa4_2CaC_796">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_2CaC_797" id="Ca4_RyR2_1CaM_2CaMCa4_O1_2CaC_797">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_2CaC_798" id="Ca4_RyR2_1CaM_2CaMCa4_O2_2CaC_798">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_C1_2CaC_799" id="Ca4_RyR2_1CaM_2CaMCa4_C1_2CaC_799">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_I_2CaC_800" id="Ca4_RyR2_1CaM_2CaMCa4_I_2CaC_800">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_2CaC_801" id="Ca4_RyR2_1CaM_3CaMCa4_2CaC_801">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_2CaC_802" id="Ca4_RyR2_1CaM_3CaMCa4_O1_2CaC_802">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_2CaC_803" id="Ca4_RyR2_1CaM_3CaMCa4_O2_2CaC_803">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_C1_2CaC_804" id="Ca4_RyR2_1CaM_3CaMCa4_C1_2CaC_804">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_I_2CaC_805" id="Ca4_RyR2_1CaM_3CaMCa4_I_2CaC_805">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_CaM_806" id="Ca4_RyR2_1CaM_1CaMCa2C_CaM_806">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_CaMCa2C_807" id="Ca4_RyR2_1CaM_1CaMCa2C_CaMCa2C_807">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_CaMCa4_808" id="Ca4_RyR2_1CaM_1CaMCa2C_CaMCa4_808">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaM_809" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaM_809">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMCa2C_810" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMCa2C_810">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMCa4_811" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMCa4_811">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaM_812" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaM_812">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMCa2C_813" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMCa2C_813">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMCa4_814" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMCa4_814">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaM_815" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaM_815">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMCa2C_816" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMCa2C_816">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMCa4_817" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMCa4_817">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_I_CaM_818" id="Ca4_RyR2_1CaM_1CaMCa2C_I_CaM_818">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_I_CaMCa2C_819" id="Ca4_RyR2_1CaM_1CaMCa2C_I_CaMCa2C_819">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_I_CaMCa4_820" id="Ca4_RyR2_1CaM_1CaMCa2C_I_CaMCa4_820">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaC_821" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaC_821">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_2CaC_822" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_2CaC_822">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_2CaC_823" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_2CaC_823">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_2CaC_824" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_2CaC_824">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_I_2CaC_825" id="Ca4_RyR2_1CaM_1CaMCa2C_I_2CaC_825">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaN_826" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaN_826">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_2CaN_827" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_2CaN_827">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_2CaN_828" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_2CaN_828">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_2CaN_829" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_2CaN_829">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_I_2CaN_830" id="Ca4_RyR2_1CaM_1CaMCa2C_I_2CaN_830">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_831" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaM_831">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_832" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa2C_832">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_833" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMCa4_833">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaM_834" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaM_834">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMCa2C_835" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMCa2C_835">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMCa4_836" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMCa4_836">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaM_837" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaM_837">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMCa2C_838" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMCa2C_838">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMCa4_839" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMCa4_839">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaM_840" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaM_840">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMCa2C_841" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMCa2C_841">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMCa4_842" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMCa4_842">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaM_843" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaM_843">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaMCa2C_844" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaMCa2C_844">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaMCa4_845" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_CaMCa4_845">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_846" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaC_846">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_2CaC_847" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_2CaC_847">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_2CaC_848" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_2CaC_848">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_2CaC_849" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_2CaC_849">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_2CaC_850" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_2CaC_850">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_851" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_2CaN_851">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_2CaN_852" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_2CaN_852">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_2CaN_853" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_2CaN_853">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_2CaN_854" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_2CaN_854">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_2CaN_855" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I_2CaN_855">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_856" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_856">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaC_857" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaC_857">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaC_858" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaC_858">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaC_859" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaC_859">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaC_860" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaC_860">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_861" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_861">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaN_862" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaN_862">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaN_863" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaN_863">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaN_864" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaN_864">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaN_865" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaN_865">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_CaM_866" id="Ca4_RyR2_1CaM_2CaMCa2C_CaM_866">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_CaMCa2C_867" id="Ca4_RyR2_1CaM_2CaMCa2C_CaMCa2C_867">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_CaMCa4_868" id="Ca4_RyR2_1CaM_2CaMCa2C_CaMCa4_868">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaM_869" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaM_869">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMCa2C_870" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMCa2C_870">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMCa4_871" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMCa4_871">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaM_872" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaM_872">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMCa2C_873" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMCa2C_873">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMCa4_874" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMCa4_874">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaM_875" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaM_875">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMCa2C_876" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMCa2C_876">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMCa4_877" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMCa4_877">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_I_CaM_878" id="Ca4_RyR2_1CaM_2CaMCa2C_I_CaM_878">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_I_CaMCa2C_879" id="Ca4_RyR2_1CaM_2CaMCa2C_I_CaMCa2C_879">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_I_CaMCa4_880" id="Ca4_RyR2_1CaM_2CaMCa2C_I_CaMCa4_880">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_2CaC_881" id="Ca4_RyR2_1CaM_2CaMCa2C_2CaC_881">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_2CaC_882" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_2CaC_882">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_2CaC_883" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_2CaC_883">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_2CaC_884" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_2CaC_884">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_I_2CaC_885" id="Ca4_RyR2_1CaM_2CaMCa2C_I_2CaC_885">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_2CaN_886" id="Ca4_RyR2_1CaM_2CaMCa2C_2CaN_886">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_2CaN_887" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_2CaN_887">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_2CaN_888" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_2CaN_888">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_2CaN_889" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_2CaN_889">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_I_2CaN_890" id="Ca4_RyR2_1CaM_2CaMCa2C_I_2CaN_890">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_891" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_891">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaC_892" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaC_892">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaC_893" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaC_893">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaC_894" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaC_894">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaC_895" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaC_895">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_896" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_896">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaN_897" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaN_897">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaN_898" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaN_898">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaN_899" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaN_899">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaN_900" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaN_900">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_2CaC_901" id="Ca4_RyR2_1CaM_3CaMCa2C_2CaC_901">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaC_902" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaC_902">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaC_903" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaC_903">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaC_904" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaC_904">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaC_905" id="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaC_905">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_2CaN_906" id="Ca4_RyR2_1CaM_3CaMCa2C_2CaN_906">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaN_907" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaN_907">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaN_908" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaN_908">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaN_909" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaN_909">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaN_910" id="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaN_910">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_CaM_911" id="Ca4_RyR2_2CaM_CaM_911">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_CaMCa2C_912" id="Ca4_RyR2_2CaM_CaMCa2C_912">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_CaMCa4_913" id="Ca4_RyR2_2CaM_CaMCa4_913">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_CaM_914" id="Ca4_RyR2_2CaM_O1_CaM_914">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_CaMCa2C_915" id="Ca4_RyR2_2CaM_O1_CaMCa2C_915">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_CaMCa4_916" id="Ca4_RyR2_2CaM_O1_CaMCa4_916">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_CaM_917" id="Ca4_RyR2_2CaM_O2_CaM_917">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_CaMCa2C_918" id="Ca4_RyR2_2CaM_O2_CaMCa2C_918">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_CaMCa4_919" id="Ca4_RyR2_2CaM_O2_CaMCa4_919">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_C1_CaM_920" id="Ca4_RyR2_2CaM_C1_CaM_920">
    <Reactant specieID="Ca4_RyR2_2CaM_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_C1_CaMCa2C_921" id="Ca4_RyR2_2CaM_C1_CaMCa2C_921">
    <Reactant specieID="Ca4_RyR2_2CaM_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_C1_CaMCa4_922" id="Ca4_RyR2_2CaM_C1_CaMCa4_922">
    <Reactant specieID="Ca4_RyR2_2CaM_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_I_CaM_923" id="Ca4_RyR2_2CaM_I_CaM_923">
    <Reactant specieID="Ca4_RyR2_2CaM_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_I_CaMCa2C_924" id="Ca4_RyR2_2CaM_I_CaMCa2C_924">
    <Reactant specieID="Ca4_RyR2_2CaM_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_I_CaMCa4_925" id="Ca4_RyR2_2CaM_I_CaMCa4_925">
    <Reactant specieID="Ca4_RyR2_2CaM_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaC_926" id="Ca4_RyR2_2CaM_2CaC_926">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_2CaC_927" id="Ca4_RyR2_2CaM_O1_2CaC_927">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_2CaC_928" id="Ca4_RyR2_2CaM_O2_2CaC_928">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_C1_2CaC_929" id="Ca4_RyR2_2CaM_C1_2CaC_929">
    <Reactant specieID="Ca4_RyR2_2CaM_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_I_2CaC_930" id="Ca4_RyR2_2CaM_I_2CaC_930">
    <Reactant specieID="Ca4_RyR2_2CaM_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_CaM_931" id="Ca4_RyR2_2CaM_1CaMCa4_CaM_931">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_CaMCa2C_932" id="Ca4_RyR2_2CaM_1CaMCa4_CaMCa2C_932">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_CaMCa4_933" id="Ca4_RyR2_2CaM_1CaMCa4_CaMCa4_933">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_CaM_934" id="Ca4_RyR2_2CaM_1CaMCa4_O1_CaM_934">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMCa2C_935" id="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMCa2C_935">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMCa4_936" id="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMCa4_936">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_CaM_937" id="Ca4_RyR2_2CaM_1CaMCa4_O2_CaM_937">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMCa2C_938" id="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMCa2C_938">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMCa4_939" id="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMCa4_939">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_C1_CaM_940" id="Ca4_RyR2_2CaM_1CaMCa4_C1_CaM_940">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMCa2C_941" id="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMCa2C_941">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMCa4_942" id="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMCa4_942">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_I_CaM_943" id="Ca4_RyR2_2CaM_1CaMCa4_I_CaM_943">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_I_CaMCa2C_944" id="Ca4_RyR2_2CaM_1CaMCa4_I_CaMCa2C_944">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_I_CaMCa4_945" id="Ca4_RyR2_2CaM_1CaMCa4_I_CaMCa4_945">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_2CaC_946" id="Ca4_RyR2_2CaM_1CaMCa4_2CaC_946">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_2CaC_947" id="Ca4_RyR2_2CaM_1CaMCa4_O1_2CaC_947">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_2CaC_948" id="Ca4_RyR2_2CaM_1CaMCa4_O2_2CaC_948">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_C1_2CaC_949" id="Ca4_RyR2_2CaM_1CaMCa4_C1_2CaC_949">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_I_2CaC_950" id="Ca4_RyR2_2CaM_1CaMCa4_I_2CaC_950">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_2CaC_951" id="Ca4_RyR2_2CaM_2CaMCa4_2CaC_951">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_2CaC_952" id="Ca4_RyR2_2CaM_2CaMCa4_O1_2CaC_952">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_2CaC_953" id="Ca4_RyR2_2CaM_2CaMCa4_O2_2CaC_953">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_C1_2CaC_954" id="Ca4_RyR2_2CaM_2CaMCa4_C1_2CaC_954">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_I_2CaC_955" id="Ca4_RyR2_2CaM_2CaMCa4_I_2CaC_955">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_CaM_956" id="Ca4_RyR2_2CaM_1CaMCa2C_CaM_956">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_CaMCa2C_957" id="Ca4_RyR2_2CaM_1CaMCa2C_CaMCa2C_957">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_CaMCa4_958" id="Ca4_RyR2_2CaM_1CaMCa2C_CaMCa4_958">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaM_959" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaM_959">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMCa2C_960" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMCa2C_960">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMCa4_961" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMCa4_961">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaM_962" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaM_962">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMCa2C_963" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMCa2C_963">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMCa4_964" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMCa4_964">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaM_965" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaM_965">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMCa2C_966" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMCa2C_966">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMCa4_967" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMCa4_967">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_I_CaM_968" id="Ca4_RyR2_2CaM_1CaMCa2C_I_CaM_968">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_I_CaMCa2C_969" id="Ca4_RyR2_2CaM_1CaMCa2C_I_CaMCa2C_969">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_I_CaMCa4_970" id="Ca4_RyR2_2CaM_1CaMCa2C_I_CaMCa4_970">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_2CaC_971" id="Ca4_RyR2_2CaM_1CaMCa2C_2CaC_971">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_2CaC_972" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_2CaC_972">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_2CaC_973" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_2CaC_973">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_2CaC_974" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_2CaC_974">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_I_2CaC_975" id="Ca4_RyR2_2CaM_1CaMCa2C_I_2CaC_975">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_2CaN_976" id="Ca4_RyR2_2CaM_1CaMCa2C_2CaN_976">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_2CaN_977" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_2CaN_977">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_2CaN_978" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_2CaN_978">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_2CaN_979" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_2CaN_979">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_I_2CaN_980" id="Ca4_RyR2_2CaM_1CaMCa2C_I_2CaN_980">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_981" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_981">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaC_982" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaC_982">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaC_983" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaC_983">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaC_984" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaC_984">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaC_985" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaC_985">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_986" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_986">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaN_987" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaN_987">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaN_988" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaN_988">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaN_989" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaN_989">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaN_990" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaN_990">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_2CaC_991" id="Ca4_RyR2_2CaM_2CaMCa2C_2CaC_991">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaC_992" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaC_992">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaC_993" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaC_993">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaC_994" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaC_994">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaC_995" id="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaC_995">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_2CaN_996" id="Ca4_RyR2_2CaM_2CaMCa2C_2CaN_996">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaN_997" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaN_997">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaN_998" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaN_998">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaN_999" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaN_999">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaN_1000" id="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaN_1000">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_CaM_1001" id="Ca4_RyR2_3CaM_CaM_1001">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_4CaM"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_CaMCa2C_1002" id="Ca4_RyR2_3CaM_CaMCa2C_1002">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_CaMCa4_1003" id="Ca4_RyR2_3CaM_CaMCa4_1003">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_CaM_1004" id="Ca4_RyR2_3CaM_O1_CaM_1004">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_CaMCa2C_1005" id="Ca4_RyR2_3CaM_O1_CaMCa2C_1005">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_CaMCa4_1006" id="Ca4_RyR2_3CaM_O1_CaMCa4_1006">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_CaM_1007" id="Ca4_RyR2_3CaM_O2_CaM_1007">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O2"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_CaMCa2C_1008" id="Ca4_RyR2_3CaM_O2_CaMCa2C_1008">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_CaMCa4_1009" id="Ca4_RyR2_3CaM_O2_CaMCa4_1009">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_C1_CaM_1010" id="Ca4_RyR2_3CaM_C1_CaM_1010">
    <Reactant specieID="Ca4_RyR2_3CaM_C1"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_C1"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_C1_CaMCa2C_1011" id="Ca4_RyR2_3CaM_C1_CaMCa2C_1011">
    <Reactant specieID="Ca4_RyR2_3CaM_C1"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_C1_CaMCa4_1012" id="Ca4_RyR2_3CaM_C1_CaMCa4_1012">
    <Reactant specieID="Ca4_RyR2_3CaM_C1"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_I_CaM_1013" id="Ca4_RyR2_3CaM_I_CaM_1013">
    <Reactant specieID="Ca4_RyR2_3CaM_I"/>
    <Reactant specieID="CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_I"/>
    <forwardRate>2.1e-08</forwardRate>
    <reverseRate>1.73e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_I_CaMCa2C_1014" id="Ca4_RyR2_3CaM_I_CaMCa2C_1014">
    <Reactant specieID="Ca4_RyR2_3CaM_I"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>3.15e-07</forwardRate>
    <reverseRate>2.59e-05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_I_CaMCa4_1015" id="Ca4_RyR2_3CaM_I_CaMCa4_1015">
    <Reactant specieID="Ca4_RyR2_3CaM_I"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>3.66e-07</forwardRate>
    <reverseRate>3.015e-06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_2CaC_1016" id="Ca4_RyR2_3CaM_2CaC_1016">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_2CaC_1017" id="Ca4_RyR2_3CaM_O1_2CaC_1017">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_2CaC_1018" id="Ca4_RyR2_3CaM_O2_2CaC_1018">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_C1_2CaC_1019" id="Ca4_RyR2_3CaM_C1_2CaC_1019">
    <Reactant specieID="Ca4_RyR2_3CaM_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_I_2CaC_1020" id="Ca4_RyR2_3CaM_I_2CaC_1020">
    <Reactant specieID="Ca4_RyR2_3CaM_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_2CaC_1021" id="Ca4_RyR2_3CaM_1CaMCa4_2CaC_1021">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_2CaC_1022" id="Ca4_RyR2_3CaM_1CaMCa4_O1_2CaC_1022">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_2CaC_1023" id="Ca4_RyR2_3CaM_1CaMCa4_O2_2CaC_1023">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_C1_2CaC_1024" id="Ca4_RyR2_3CaM_1CaMCa4_C1_2CaC_1024">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_I_2CaC_1025" id="Ca4_RyR2_3CaM_1CaMCa4_I_2CaC_1025">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_2CaC_1026" id="Ca4_RyR2_3CaM_1CaMCa2C_2CaC_1026">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaC_1027" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaC_1027">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaC_1028" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaC_1028">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaC_1029" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaC_1029">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaC_1030" id="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaC_1030">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_2CaN_1031" id="Ca4_RyR2_3CaM_1CaMCa2C_2CaN_1031">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaN_1032" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaN_1032">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaN_1033" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaN_1033">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaN_1034" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaN_1034">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaN_1035" id="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaN_1035">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>0.3639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_2CaC_1036" id="Ca4_RyR2_4CaM_2CaC_1036">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_2CaC_1037" id="Ca4_RyR2_4CaM_O1_2CaC_1037">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_2CaC_1038" id="Ca4_RyR2_4CaM_O2_2CaC_1038">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_C1_2CaC_1039" id="Ca4_RyR2_4CaM_C1_2CaC_1039">
    <Reactant specieID="Ca4_RyR2_4CaM_C1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_I_2CaC_1040" id="Ca4_RyR2_4CaM_I_2CaC_1040">
    <Reactant specieID="Ca4_RyR2_4CaM_I"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_RyR2Ca4O1_1041" id="Ca4_RyR2_RyR2Ca4O1_1041">
    <Reactant specieID="Ca4_RyR2"/>
    <Product specieID="Ca4_RyR2_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_RyR2Ca4O2_1042" id="Ca4_RyR2_RyR2Ca4O2_1042">
    <Reactant specieID="Ca4_RyR2"/>
    <Product specieID="Ca4_RyR2_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O1_RyR2Ca4O1C1_1043" id="Ca4_RyR2_O1_RyR2Ca4O1C1_1043">
    <Reactant specieID="Ca4_RyR2_O1"/>
    <Product specieID="Ca4_RyR2_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O2_RyR2Ca4O2C1_1044" id="Ca4_RyR2_O2_RyR2Ca4O2C1_1044">
    <Reactant specieID="Ca4_RyR2_O2"/>
    <Product specieID="Ca4_RyR2_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_C1_RyR2Ca4C1I_1045" id="Ca4_RyR2_C1_RyR2Ca4C1I_1045">
    <Reactant specieID="Ca4_RyR2_C1"/>
    <Product specieID="Ca4_RyR2_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_CaMRyR2Ca4O1_1046" id="Ca4_RyR2_1CaMCa4_CaMRyR2Ca4O1_1046">
    <Reactant specieID="Ca4_RyR2_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_CaMRyR2Ca4O2_1047" id="Ca4_RyR2_1CaMCa4_CaMRyR2Ca4O2_1047">
    <Reactant specieID="Ca4_RyR2_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_CaMRyR2Ca4O1C1_1048" id="Ca4_RyR2_1CaMCa4_O1_CaMRyR2Ca4O1C1_1048">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_CaMRyR2Ca4O2C1_1049" id="Ca4_RyR2_1CaMCa4_O2_CaMRyR2Ca4O2C1_1049">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_C1_CaMRyR2Ca4C1I_1050" id="Ca4_RyR2_1CaMCa4_C1_CaMRyR2Ca4C1I_1050">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_II2_1051" id="Ca4_RyR2_1CaMCa4_O1_II2_1051">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_II2_1052" id="Ca4_RyR2_1CaMCa4_O2_II2_1052">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_CaMRyR2Ca4O1_1053" id="Ca4_RyR2_2CaMCa4_CaMRyR2Ca4O1_1053">
    <Reactant specieID="Ca4_RyR2_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_CaMRyR2Ca4O2_1054" id="Ca4_RyR2_2CaMCa4_CaMRyR2Ca4O2_1054">
    <Reactant specieID="Ca4_RyR2_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_CaMRyR2Ca4O1C1_1055" id="Ca4_RyR2_2CaMCa4_O1_CaMRyR2Ca4O1C1_1055">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_CaMRyR2Ca4O2C1_1056" id="Ca4_RyR2_2CaMCa4_O2_CaMRyR2Ca4O2C1_1056">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_C1_CaMRyR2Ca4C1I_1057" id="Ca4_RyR2_2CaMCa4_C1_CaMRyR2Ca4C1I_1057">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_II2_1058" id="Ca4_RyR2_2CaMCa4_O1_II2_1058">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_II2_1059" id="Ca4_RyR2_2CaMCa4_O2_II2_1059">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_CaMRyR2Ca4O1_1060" id="Ca4_RyR2_3CaMCa4_CaMRyR2Ca4O1_1060">
    <Reactant specieID="Ca4_RyR2_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_CaMRyR2Ca4O2_1061" id="Ca4_RyR2_3CaMCa4_CaMRyR2Ca4O2_1061">
    <Reactant specieID="Ca4_RyR2_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_CaMRyR2Ca4O1C1_1062" id="Ca4_RyR2_3CaMCa4_O1_CaMRyR2Ca4O1C1_1062">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_CaMRyR2Ca4O2C1_1063" id="Ca4_RyR2_3CaMCa4_O2_CaMRyR2Ca4O2C1_1063">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_C1_CaMRyR2Ca4C1I_1064" id="Ca4_RyR2_3CaMCa4_C1_CaMRyR2Ca4C1I_1064">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_II2_1065" id="Ca4_RyR2_3CaMCa4_O1_II2_1065">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_II2_1066" id="Ca4_RyR2_3CaMCa4_O2_II2_1066">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O1_1067" id="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O1_1067">
    <Reactant specieID="Ca4_RyR2_4CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O2_1068" id="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O2_1068">
    <Reactant specieID="Ca4_RyR2_4CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_CaMRyR2Ca4O1C1_1069" id="Ca4_RyR2_4CaMCa4_O1_CaMRyR2Ca4O1C1_1069">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_CaMRyR2Ca4O2C1_1070" id="Ca4_RyR2_4CaMCa4_O2_CaMRyR2Ca4O2C1_1070">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_C1_CaMRyR2Ca4C1I_1071" id="Ca4_RyR2_4CaMCa4_C1_CaMRyR2Ca4C1I_1071">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_II2_1072" id="Ca4_RyR2_4CaMCa4_O1_II2_1072">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_II2_1073" id="Ca4_RyR2_4CaMCa4_O2_II2_1073">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_CaMRyR2Ca4O1_1074" id="Ca4_RyR2_1CaMCa2C_CaMRyR2Ca4O1_1074">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_CaMRyR2Ca4O2_1075" id="Ca4_RyR2_1CaMCa2C_CaMRyR2Ca4O2_1075">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1076" id="Ca4_RyR2_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1076">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1077" id="Ca4_RyR2_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1077">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_C1_CaMRyR2Ca4C1I_1078" id="Ca4_RyR2_1CaMCa2C_C1_CaMRyR2Ca4C1I_1078">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1079" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1079">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1080" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1080">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1081" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1081">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1082" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1082">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1083" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1083">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_II2_1084" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_II2_1084">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_II2_1085" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_II2_1085">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1086" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1086">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1087" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1087">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1088" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1088">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1089" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1089">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1090" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1090">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_II2_1091" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_II2_1091">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_II2_1092" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_II2_1092">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O1_1093" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O1_1093">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O2_1094" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O2_1094">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_CaMRyR2Ca4O1C1_1095" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_CaMRyR2Ca4O1C1_1095">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_CaMRyR2Ca4O2C1_1096" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_CaMRyR2Ca4O2C1_1096">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_CaMRyR2Ca4C1I_1097" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_CaMRyR2Ca4C1I_1097">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_II2_1098" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_II2_1098">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_II2_1099" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_II2_1099">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_CaMRyR2Ca4O1_1100" id="Ca4_RyR2_2CaMCa2C_CaMRyR2Ca4O1_1100">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_CaMRyR2Ca4O2_1101" id="Ca4_RyR2_2CaMCa2C_CaMRyR2Ca4O2_1101">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1102" id="Ca4_RyR2_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1102">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1103" id="Ca4_RyR2_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1103">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_C1_CaMRyR2Ca4C1I_1104" id="Ca4_RyR2_2CaMCa2C_C1_CaMRyR2Ca4C1I_1104">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1105" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1105">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1106" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1106">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1107" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1107">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1108" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1108">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1109" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1109">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_II2_1110" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_II2_1110">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_II2_1111" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_II2_1111">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1112" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1112">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1113" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1113">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1114" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1114">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1115" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1115">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1116" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1116">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_II2_1117" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_II2_1117">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_II2_1118" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_II2_1118">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_CaMRyR2Ca4O1_1119" id="Ca4_RyR2_3CaMCa2C_CaMRyR2Ca4O1_1119">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_CaMRyR2Ca4O2_1120" id="Ca4_RyR2_3CaMCa2C_CaMRyR2Ca4O2_1120">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_CaMRyR2Ca4O1C1_1121" id="Ca4_RyR2_3CaMCa2C_O1_CaMRyR2Ca4O1C1_1121">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_CaMRyR2Ca4O2C1_1122" id="Ca4_RyR2_3CaMCa2C_O2_CaMRyR2Ca4O2C1_1122">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_C1_CaMRyR2Ca4C1I_1123" id="Ca4_RyR2_3CaMCa2C_C1_CaMRyR2Ca4C1I_1123">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1124" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1124">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1125" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1125">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1126" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1126">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1127" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1127">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1128" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1128">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_II2_1129" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_II2_1129">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_II2_1130" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_II2_1130">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O1_1131" id="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O1_1131">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O2_1132" id="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O2_1132">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_CaMRyR2Ca4O1C1_1133" id="Ca4_RyR2_4CaMCa2C_O1_CaMRyR2Ca4O1C1_1133">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_CaMRyR2Ca4O2C1_1134" id="Ca4_RyR2_4CaMCa2C_O2_CaMRyR2Ca4O2C1_1134">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_C1_CaMRyR2Ca4C1I_1135" id="Ca4_RyR2_4CaMCa2C_C1_CaMRyR2Ca4C1I_1135">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_CaMRyR2Ca4O1_1136" id="Ca4_RyR2_1CaM_CaMRyR2Ca4O1_1136">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_CaMRyR2Ca4O2_1137" id="Ca4_RyR2_1CaM_CaMRyR2Ca4O2_1137">
    <Reactant specieID="Ca4_RyR2_1CaM"/>
    <Product specieID="Ca4_RyR2_1CaM_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_CaMRyR2Ca4O1C1_1138" id="Ca4_RyR2_1CaM_O1_CaMRyR2Ca4O1C1_1138">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_CaMRyR2Ca4O2C1_1139" id="Ca4_RyR2_1CaM_O2_CaMRyR2Ca4O2C1_1139">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_C1_CaMRyR2Ca4C1I_1140" id="Ca4_RyR2_1CaM_C1_CaMRyR2Ca4C1I_1140">
    <Reactant specieID="Ca4_RyR2_1CaM_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4O1_1141" id="Ca4_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4O1_1141">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4O2_1142" id="Ca4_RyR2_1CaM_1CaMCa4_CaMRyR2Ca4O2_1142">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1143" id="Ca4_RyR2_1CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1143">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1144" id="Ca4_RyR2_1CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1144">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1145" id="Ca4_RyR2_1CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1145">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_II2_1146" id="Ca4_RyR2_1CaM_1CaMCa4_O1_II2_1146">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_II2_1147" id="Ca4_RyR2_1CaM_1CaMCa4_O2_II2_1147">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4O1_1148" id="Ca4_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4O1_1148">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4O2_1149" id="Ca4_RyR2_1CaM_2CaMCa4_CaMRyR2Ca4O2_1149">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_1150" id="Ca4_RyR2_1CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_1150">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_1151" id="Ca4_RyR2_1CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_1151">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_1152" id="Ca4_RyR2_1CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_1152">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_II2_1153" id="Ca4_RyR2_1CaM_2CaMCa4_O1_II2_1153">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_II2_1154" id="Ca4_RyR2_1CaM_2CaMCa4_O2_II2_1154">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O1_1155" id="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O1_1155">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O2_1156" id="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O2_1156">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_CaMRyR2Ca4O1C1_1157" id="Ca4_RyR2_1CaM_3CaMCa4_O1_CaMRyR2Ca4O1C1_1157">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_CaMRyR2Ca4O2C1_1158" id="Ca4_RyR2_1CaM_3CaMCa4_O2_CaMRyR2Ca4O2C1_1158">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_C1_CaMRyR2Ca4C1I_1159" id="Ca4_RyR2_1CaM_3CaMCa4_C1_CaMRyR2Ca4C1I_1159">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_II2_1160" id="Ca4_RyR2_1CaM_3CaMCa4_O1_II2_1160">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_II2_1161" id="Ca4_RyR2_1CaM_3CaMCa4_O2_II2_1161">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4O1_1162" id="Ca4_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4O1_1162">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4O2_1163" id="Ca4_RyR2_1CaM_1CaMCa2C_CaMRyR2Ca4O2_1163">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1164" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1164">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1165" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1165">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1166" id="Ca4_RyR2_1CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1166">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1167" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1167">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1168" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1168">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1169" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1169">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1170" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1170">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1171" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1171">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_II2_1172" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_II2_1172">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_II2_1173" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_II2_1173">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1174" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_1174">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1175" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_1175">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1176" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_1176">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1177" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_1177">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1178" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_1178">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_II2_1179" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_II2_1179">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_II2_1180" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_II2_1180">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4O1_1181" id="Ca4_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4O1_1181">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4O2_1182" id="Ca4_RyR2_1CaM_2CaMCa2C_CaMRyR2Ca4O2_1182">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1183" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1183">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1184" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1184">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_1185" id="Ca4_RyR2_1CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_1185">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1186" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1186">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1187" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1187">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1188" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1188">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1189" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1189">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1190" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1190">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_II2_1191" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_II2_1191">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_II2_1192" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_II2_1192">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O1_1193" id="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O1_1193">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O2_1194" id="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O2_1194">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_CaMRyR2Ca4O1C1_1195" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_CaMRyR2Ca4O1C1_1195">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_CaMRyR2Ca4O2C1_1196" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_CaMRyR2Ca4O2C1_1196">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_CaMRyR2Ca4C1I_1197" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_CaMRyR2Ca4C1I_1197">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_CaMRyR2Ca4O1_1198" id="Ca4_RyR2_2CaM_CaMRyR2Ca4O1_1198">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_CaMRyR2Ca4O2_1199" id="Ca4_RyR2_2CaM_CaMRyR2Ca4O2_1199">
    <Reactant specieID="Ca4_RyR2_2CaM"/>
    <Product specieID="Ca4_RyR2_2CaM_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_CaMRyR2Ca4O1C1_1200" id="Ca4_RyR2_2CaM_O1_CaMRyR2Ca4O1C1_1200">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_CaMRyR2Ca4O2C1_1201" id="Ca4_RyR2_2CaM_O2_CaMRyR2Ca4O2C1_1201">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_C1_CaMRyR2Ca4C1I_1202" id="Ca4_RyR2_2CaM_C1_CaMRyR2Ca4C1I_1202">
    <Reactant specieID="Ca4_RyR2_2CaM_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4O1_1203" id="Ca4_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4O1_1203">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4O2_1204" id="Ca4_RyR2_2CaM_1CaMCa4_CaMRyR2Ca4O2_1204">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1205" id="Ca4_RyR2_2CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1205">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1206" id="Ca4_RyR2_2CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1206">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1207" id="Ca4_RyR2_2CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1207">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_II2_1208" id="Ca4_RyR2_2CaM_1CaMCa4_O1_II2_1208">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_II2_1209" id="Ca4_RyR2_2CaM_1CaMCa4_O2_II2_1209">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O1_1210" id="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O1_1210">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O2_1211" id="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O2_1211">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_1212" id="Ca4_RyR2_2CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_1212">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_1213" id="Ca4_RyR2_2CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_1213">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_1214" id="Ca4_RyR2_2CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_1214">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_II2_1215" id="Ca4_RyR2_2CaM_2CaMCa4_O1_II2_1215">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_II2_1216" id="Ca4_RyR2_2CaM_2CaMCa4_O2_II2_1216">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4O1_1217" id="Ca4_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4O1_1217">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4O2_1218" id="Ca4_RyR2_2CaM_1CaMCa2C_CaMRyR2Ca4O2_1218">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1219" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1219">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1220" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1220">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1221" id="Ca4_RyR2_2CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1221">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1222" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_1222">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1223" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_1223">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1224" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_1224">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1225" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_1225">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1226" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_1226">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_II2_1227" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_II2_1227">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_II2_1228" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_II2_1228">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O1_1229" id="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O1_1229">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O2_1230" id="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O2_1230">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1231" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_1231">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1232" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_1232">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_1233" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_1233">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_CaMRyR2Ca4O1_1234" id="Ca4_RyR2_3CaM_CaMRyR2Ca4O1_1234">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_CaMRyR2Ca4O2_1235" id="Ca4_RyR2_3CaM_CaMRyR2Ca4O2_1235">
    <Reactant specieID="Ca4_RyR2_3CaM"/>
    <Product specieID="Ca4_RyR2_3CaM_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_CaMRyR2Ca4O1C1_1236" id="Ca4_RyR2_3CaM_O1_CaMRyR2Ca4O1C1_1236">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_CaMRyR2Ca4O2C1_1237" id="Ca4_RyR2_3CaM_O2_CaMRyR2Ca4O2C1_1237">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_C1_CaMRyR2Ca4C1I_1238" id="Ca4_RyR2_3CaM_C1_CaMRyR2Ca4C1I_1238">
    <Reactant specieID="Ca4_RyR2_3CaM_C1"/>
    <Product specieID="Ca4_RyR2_3CaM_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O1_1239" id="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O1_1239">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O2_1240" id="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O2_1240">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1241" id="Ca4_RyR2_3CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_1241">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1242" id="Ca4_RyR2_3CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_1242">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1243" id="Ca4_RyR2_3CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_1243">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_II2_1244" id="Ca4_RyR2_3CaM_1CaMCa4_O1_II2_1244">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_II2_1245" id="Ca4_RyR2_3CaM_1CaMCa4_O2_II2_1245">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O1_1246" id="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O1_1246">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O2_1247" id="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O2_1247">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1248" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_1248">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1249" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_1249">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1250" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_1250">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_CaMRyR2Ca4O1_1251" id="Ca4_RyR2_4CaM_CaMRyR2Ca4O1_1251">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_CaMRyR2Ca4O2_1252" id="Ca4_RyR2_4CaM_CaMRyR2Ca4O2_1252">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_CaMRyR2Ca4O1C1_1253" id="Ca4_RyR2_4CaM_O1_CaMRyR2Ca4O1C1_1253">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Product specieID="Ca4_RyR2_4CaM_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_CaMRyR2Ca4O2C1_1254" id="Ca4_RyR2_4CaM_O2_CaMRyR2Ca4O2C1_1254">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Product specieID="Ca4_RyR2_4CaM_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_C1_CaMRyR2Ca4C1I_1255" id="Ca4_RyR2_4CaM_C1_CaMRyR2Ca4C1I_1255">
    <Reactant specieID="Ca4_RyR2_4CaM_C1"/>
    <Product specieID="Ca4_RyR2_4CaM_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Specie name="CaER" id="CaER" kdiff="10" kdiffunit="mu2/s"/>
  <Reaction name="Ca4_RyR2_O1_release_1256" id="Ca4_RyR2_O1_release_1256">
    <Reactant specieID="Ca4_RyR2_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_O2_release_1257" id="Ca4_RyR2_O2_release_1257">
    <Reactant specieID="Ca4_RyR2_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O1_release_1258" id="Ca4_RyR2_1CaMCa4_O1_release_1258">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa4_O2_release_1259" id="Ca4_RyR2_1CaMCa4_O2_release_1259">
    <Reactant specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O1_release_1260" id="Ca4_RyR2_2CaMCa4_O1_release_1260">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa4_O2_release_1261" id="Ca4_RyR2_2CaMCa4_O2_release_1261">
    <Reactant specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O1_release_1262" id="Ca4_RyR2_3CaMCa4_O1_release_1262">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa4_O2_release_1263" id="Ca4_RyR2_3CaMCa4_O2_release_1263">
    <Reactant specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_release_1264" id="Ca4_RyR2_4CaMCa4_O1_release_1264">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_release_1265" id="Ca4_RyR2_4CaMCa4_O2_release_1265">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O1_release_1266" id="Ca4_RyR2_1CaMCa2C_O1_release_1266">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_O2_release_1267" id="Ca4_RyR2_1CaMCa2C_O2_release_1267">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_release_1268" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1_release_1268">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_release_1269" id="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2_release_1269">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_release_1270" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1_release_1270">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_release_1271" id="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2_release_1271">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_release_1272" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_release_1272">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_release_1273" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_release_1273">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O1_release_1274" id="Ca4_RyR2_2CaMCa2C_O1_release_1274">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_O2_release_1275" id="Ca4_RyR2_2CaMCa2C_O2_release_1275">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_release_1276" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1_release_1276">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_release_1277" id="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2_release_1277">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_release_1278" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_release_1278">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_release_1279" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_release_1279">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O1_release_1280" id="Ca4_RyR2_3CaMCa2C_O1_release_1280">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_O2_release_1281" id="Ca4_RyR2_3CaMCa2C_O2_release_1281">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_release_1282" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_release_1282">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_release_1283" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_release_1283">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_release_1284" id="Ca4_RyR2_4CaMCa2C_O1_release_1284">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_release_1285" id="Ca4_RyR2_4CaMCa2C_O2_release_1285">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O1_release_1286" id="Ca4_RyR2_1CaM_O1_release_1286">
    <Reactant specieID="Ca4_RyR2_1CaM_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_O2_release_1287" id="Ca4_RyR2_1CaM_O2_release_1287">
    <Reactant specieID="Ca4_RyR2_1CaM_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O1_release_1288" id="Ca4_RyR2_1CaM_1CaMCa4_O1_release_1288">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa4_O2_release_1289" id="Ca4_RyR2_1CaM_1CaMCa4_O2_release_1289">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O1_release_1290" id="Ca4_RyR2_1CaM_2CaMCa4_O1_release_1290">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa4_O2_release_1291" id="Ca4_RyR2_1CaM_2CaMCa4_O2_release_1291">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_release_1292" id="Ca4_RyR2_1CaM_3CaMCa4_O1_release_1292">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_release_1293" id="Ca4_RyR2_1CaM_3CaMCa4_O2_release_1293">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O1_release_1294" id="Ca4_RyR2_1CaM_1CaMCa2C_O1_release_1294">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_O2_release_1295" id="Ca4_RyR2_1CaM_1CaMCa2C_O2_release_1295">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_release_1296" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1_release_1296">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_release_1297" id="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2_release_1297">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_release_1298" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_release_1298">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_release_1299" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_release_1299">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O1_release_1300" id="Ca4_RyR2_1CaM_2CaMCa2C_O1_release_1300">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_O2_release_1301" id="Ca4_RyR2_1CaM_2CaMCa2C_O2_release_1301">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_release_1302" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_release_1302">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_release_1303" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_release_1303">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_release_1304" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_release_1304">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_release_1305" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_release_1305">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O1_release_1306" id="Ca4_RyR2_2CaM_O1_release_1306">
    <Reactant specieID="Ca4_RyR2_2CaM_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_O2_release_1307" id="Ca4_RyR2_2CaM_O2_release_1307">
    <Reactant specieID="Ca4_RyR2_2CaM_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O1_release_1308" id="Ca4_RyR2_2CaM_1CaMCa4_O1_release_1308">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa4_O2_release_1309" id="Ca4_RyR2_2CaM_1CaMCa4_O2_release_1309">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_release_1310" id="Ca4_RyR2_2CaM_2CaMCa4_O1_release_1310">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_release_1311" id="Ca4_RyR2_2CaM_2CaMCa4_O2_release_1311">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O1_release_1312" id="Ca4_RyR2_2CaM_1CaMCa2C_O1_release_1312">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_O2_release_1313" id="Ca4_RyR2_2CaM_1CaMCa2C_O2_release_1313">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_release_1314" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_release_1314">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_release_1315" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_release_1315">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_release_1316" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_release_1316">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_release_1317" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_release_1317">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O1_release_1318" id="Ca4_RyR2_3CaM_O1_release_1318">
    <Reactant specieID="Ca4_RyR2_3CaM_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_O2_release_1319" id="Ca4_RyR2_3CaM_O2_release_1319">
    <Reactant specieID="Ca4_RyR2_3CaM_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_release_1320" id="Ca4_RyR2_3CaM_1CaMCa4_O1_release_1320">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_release_1321" id="Ca4_RyR2_3CaM_1CaMCa4_O2_release_1321">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_release_1322" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_release_1322">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_release_1323" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_release_1323">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_release_1324" id="Ca4_RyR2_4CaM_O1_release_1324">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_release_1325" id="Ca4_RyR2_4CaM_O2_release_1325">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
<Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="CK" id="CK" kdiff="0.32" kdiffunit="mu2/s"/>
    <Specie name="CKp" id="CKp" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCaMCa4" id="CKCaMCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCaM" id="CKCaM" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCaMCa2C" id="CKCaMCa2C" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCaMCa2N" id="CKCaMCa2N" kdiff="0.017" kdiffunit="mu2/s"/>
    
    <Specie name="CKpCaMCa4" id="CKpCaMCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="Complex" id="Complex" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pComplex" id="pComplex" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpPP1" id="CKpPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCaMCa4PP1" id="CKpCaMCa4PP1" kdiff="0" kdiffunit="mu2/s"/>
	


<Reaction name="CKCaM bind" id="CKCaM_bind">
        <Reactant specieID="CaM"/>
        <Reactant specieID="CK"/>
        <Product specieID="CKCaM"/>

        <forwardRate>3.8e-9   </forwardRate>
        <reverseRate> 5.5e-3      </reverseRate>
    </Reaction>

    <Reaction name="CKCaMCa2C bind" id="CKCaMCa2C_bind">
        <Reactant specieID="CaMCa2C"/>
        <Reactant specieID="CK"/>
        <Product specieID="CKCaMCa2C"/>

        <forwardRate> 0.92e-6   </forwardRate>
        <reverseRate> 6.8e-3      </reverseRate>
    </Reaction>

    <Reaction name="CKCaMCa2N bind" id="CKCaMCa2N_bind">
        <Reactant specieID="CaMCa2N"/>
        <Reactant specieID="CK"/>
        <Product specieID="CKCaMCa2N"/>

        <forwardRate> 0.1e-6   </forwardRate>
        <reverseRate> 1.7e-3      </reverseRate>
    </Reaction>


    <Reaction name="CKCaMCa4 bind" id="CKCaMCa4_bind">
        <Reactant specieID="CaMCa4"/>
        <Reactant specieID="CK"/>
        <Product specieID="CKCaMCa4"/>

        <forwardRate> 30e-6   </forwardRate>
        <reverseRate> 1.7e-3      </reverseRate>
    </Reaction>

    <Reaction name="CKCaMN_bind" id="CKCaMN_Ca_bind">
      <Reactant specieID="CKCaM"/>
      <Reactant specieID="Ca" power="2"/>
      <Product specieID="CKCaMCa2N"/>
      <forwardRate>2.23e-7</forwardRate>
      <reverseRate>0.361</reverseRate>
      <Q10>0.2</Q10>
    </Reaction>

     <Reaction name="CKCaMC_bind" id="CKCaMC_Ca_bind">
      <Reactant specieID="CKCaM"/>
      <Reactant specieID="Ca" power="2"/>
      <Product specieID="CKCaMCa2C"/>
      <forwardRate>2.23e-7</forwardRate>
      <reverseRate>0.00308</reverseRate>
      <Q10>0.2</Q10>
     </Reaction>

     <Reaction name="CKCaMCa2C_bind" id="CKCaMCa2C_Ca_bind">
       <Reactant specieID="CKCaMCa2C"/>
       <Reactant specieID="Ca" power="2"/>
       <Product specieID="CKCaMCa4"/>
       <forwardRate>1.93e-7</forwardRate>
       <reverseRate>0.2038</reverseRate>
       <Q10>0.2</Q10>
     </Reaction>
     
     <Reaction name="CKCaMCa2N_bind" id="CKCaMCa2N_Ca_bind">
       <Reactant specieID="CKCaMCa2N"/>
       <Reactant specieID="Ca" power="2"/>
       <Product specieID="CKCaMCa4"/>
       <forwardRate>0.000444</forwardRate>
       <reverseRate>4</reverseRate>
       <Q10>0.2</Q10>
    </Reaction>

    

    
<Reaction name="pComplex bind" id="pComplex_bind">
        <Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="CKCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 10e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>
<Reaction name="CKpCaMCompl bind" id="CKpCaMCompl_bind">
        <Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKpCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>

<Reaction name="CKCaMCompl bind" id="CKCaMCompl_bind">
        <Reactant specieID="CKCaMCa4"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>
    
 <Reaction name="2Complex bind" id="2Complex_bind">
        <Reactant specieID="Complex" power="2"/>
        <Product specieID="Complex"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>

 <Reaction name="ComplpCompl bind" id="ComplpCompl_bind">
        <Reactant specieID="Complex"/>
        <Reactant specieID="pComplex"/>
        <Product specieID="pComplex" power="2"/>

        <forwardRate> 0.03e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>


    
    <Reaction name="CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"/>
        <Product specieID="CaMCa4"/>
        <Product specieID="CKp"/>

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<Reaction name="CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

  
   <Reaction name="CKpCaMPP1_bind" id="CKpCaMPP1_bind">
	<Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCaMCa4PP1"/>

	
    <forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpCaMPP1_reac" id="CKpCaMPP1_reac">
	<Reactant specieID="CKpCaMCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCaMCa4"/>

<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

    <Specie name="PP2B" id="PP2B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa2C" id="PP2BCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2CaMCa2N" id="PP2BCaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  
  <Reaction name="CaM+PP2B--PP2BCaM reac" id="CaM+PP2B--PP2BCaM_id">
    <Reactant specieID="CaM"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaM"/>
    
    <forwardRate> 0.046e-5       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

    <Reaction name="CaMCa2C+PP2B--PP2BCaMCa2C reac" id="CaMCa2C+PP2B--PP2BCaMCa2C_id">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2C"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaMCa2N+PP2B--PP2BCaMCa2N reac" id="CaMCa2N+PP2B--PP2BCaMCa2N_id">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2N"/>
    
    <forwardRate> 0.046e-4       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

 
  <Reaction name="CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="PP2BCaMCa2N+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2N+Ca2--PP2BCaMCa4_id">
    <Reactant specieID="PP2BCaMCa2N"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate>1.62e-6</forwardRate>
    <reverseRate>0.438</reverseRate>
    
  </Reaction>

  <Reaction name="PP2BCaM+Ca2--PP2BCaMCa2N reac" id="PP2BCaM+Ca2--PP2BCaMCa2N_id">
    <Reactant specieID="PP2BCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="PP2BCaMCa2N"/>
    
    <forwardRate>2.62e-7</forwardRate>
    <reverseRate>3.61</reverseRate>
  </Reaction>

      <Reaction name="PP2BCaM+Ca2--PP2BCaMCa2C reac" id="PP2BCaM+Ca2--PP2BCaMCa2C_id">
    <Reactant specieID="PP2BCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="PP2BCaMCa2C"/>
    
    <forwardRate>1.62e-6</forwardRate>
    <reverseRate>0.438</reverseRate>
    
  </Reaction>

  <Reaction name="PP2BCaMCa2C+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2C+Ca2--PP2BCaMCa4_id">
    <Reactant specieID="PP2BCaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate>2.62e-7</forwardRate>
    <reverseRate>3.61</reverseRate>

    
  </Reaction>
<Specie name="Glu" id="Glu" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="GluOut" id="GluOut" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="MgluR" id="MgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluR" id="GluMgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="MgluRGq" id="MgluRGq" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="Gqabg" id="Gqabg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq" id="GluMgluRGq" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGTP" id="GqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGDP" id="GqaGDP" kdiff="0" kdiffunit="mu2/s"/>  

  <Specie name="Plc" id="Plc" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCa" id="PlcCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTP" id="PlcCaGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTP" id="PlcGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2" id="Pip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaPip2" id="PlcCaPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>
 
  
  <Specie name="PIkinase" id="PIkinase" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3degPIk" id="IP3degPIk" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="IP3degrad" id="IP3degrad" kdiff="10.6" kdiffunit="mu2/s"/>

  <Specie name="IP3" id="IP3" kdiff="220." kdiffunit="mu2/s"/>
  <Specie name="IP3K" id="IP3K" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P" id="IP5P" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2" id="IP3K_Ca2" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3" id="IP5P_IP3" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3" id="IP3K_Ca2_IP3" kdiff="10." kdiffunit="mu2/s"/>


  <Reaction name="Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcCa"/>

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcGqaGTP"/>

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCa"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate>0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 
  <Reaction name="PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaPip2"/>
    
    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <Reaction name="PlcCaPip2--PlcCaDag+IP3" id="PlcCaPip2--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCa"/>
    <Product specieID="IP3"/>
    
    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>
    
    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2"/>
    <Product specieID="PlcCaGqaGTP"/>
    <Product specieID="IP3"/>

    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>

  
  <Reaction name="IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP3"/>
    
    <forwardRate> 9e-06      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP3degrad"/>
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="IP3K_Ca2"/>
    
    <forwardRate> 1111e-09      </forwardRate>
    <reverseRate> 100e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_Ca2_IP3"/>

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"/>
  <Product specieID="IP3degrad"/>
  <Product specieID="IP3K_Ca2"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degrad + PIkinase -- IP3degPIkinase" id="PIkinase1">
    <Reactant specieID="IP3degrad"/>   
    <Reactant specieID="PIkinase"/>
    <Product specieID="IP3degPIk"/>

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degPIkinase -- PIP2 + PIkinase" id="PIkinase2">
    <Reactant specieID="IP3degPIk"/>
    <Product specieID="PIkinase"/>
    <Product specieID="Pip2"/>

    <forwardRate> 1e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>    

<Reaction name="PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="Plc"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Product specieID="PlcCa"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"/>
  <Product specieID="Gqabg"/>

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>




<Reaction name="Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.02e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

  
   <Reaction name="Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRdesens"/>

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <Reaction name="Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="GluMgluR"/>

        <forwardRate> 0.5e-06 </forwardRate>
        <reverseRate> 6.6e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (vs Dhpg) -->
        <!--forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 1e-03      </reverseRate-->
        <Q10>         0.2          </Q10>
    </Reaction>

    <Reaction name="Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  0.0015e-03  </forwardRate>
        <reverseRate>   0.68e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <Reaction name="Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="MgluRGq"/>

        <forwardRate> 0.75e-06 </forwardRate>
        <reverseRate> 6.8e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <Reaction name="Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluRGq"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <Reaction name="GluMgluRGq--GqaGTP+GluMgluRGqbg" id="GluMgluRGq--GqaGTP+GluMgluRGqbg">
        <Reactant specieID="GluMgluRGq"/>
        <Product specieID="GqaGTP"/>
        <Product specieID="GluMgluR"/> 
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  

    

<Specie name="IP3R" id="IP3R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3" id="IP3RIP3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RO" id="IP3RO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC" id="IP3RC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC2" id="IP3RC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC3" id="IP3RC3" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="IP3RC4" id="IP3RC4" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RIP3"/>

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RO"/>
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name="IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"/>                                                                      
    <Reactant specieID="Ca"/>                                                                     
    <Product specieID="IP3RC"/>                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <Reaction name="IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"/>
      <Reactant specieID="Ca"/>

    <Product specieID="IP3RC2"/>

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC2+Ca" id="IP3C2+Ca">
    <Reactant specieID="IP3RC2"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC3"/>
    
    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="IP3RC3+Ca" id="IP3C3+Ca">
    <Reactant specieID="IP3RC3"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC4"/>
    
    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
 
<Reaction name="IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3RO"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RO"/>
    <Product specieID="Ca"/>

    <forwardRate> 5.555666666666666e-05 </forwardRate>
    <reverseRate> 1.8518888888888888e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>
    

 <Specie name="PMJ" id="PMJ" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="PMJ_STIM_4" id="PMJ_STIM_4" kdiff="0." kdiffunit="mu2/s"/>
    
  <Specie name="Orai3STIM_4" id="Orai3STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai2STIM_4" id="Orai2STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_4" id="STIM_4" kdiff="0.01" kdiffunit="mu2/s"/>
  <Specie name="STIM_2" id="STIM_2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="STIM_2CaER" id="STIM_2CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <Reaction name="SOCE1" id="SOCE1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai3STIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <Product specieID="Ca"/>
    
    <forwardRate>5e-8</forwardRate>
    <reverseRate>5e-8</reverseRate>
  </Reaction>
  <Reaction name="SOCE2" id="SOCE2">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai2STIM_4"/>
    <Product specieID="Orai2STIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>1.5e-9</reverseRate>
  </Reaction>

 <Reaction name="SOCE3" id="SOCE3">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-11</forwardRate>
    <reverseRate>1.5e-11</reverseRate>
  </Reaction>
   

  <Reaction name="STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM_2" power="2"/>
    <Product specieID="STIM_4"/>
    <forwardRate>4.8e-7</forwardRate>
    <reverseRate>11e-5</reverseRate>
  </Reaction>
  

  <Reaction name="STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM_2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="STIM_2CaER"/>
    <forwardRate>8e-7</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ" id="STIM_PMJ">
    <Reactant specieID="STIM_4"/>
    <Reactant specieID="PMJ"/>
    <Product specieID="PMJ_STIM_4"/>
    <Product specieID="PMJ"/>
    <forwardRate>1.8e-4</forwardRate>
    <reverseRate>3e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ_Orai" id="STIM_PMJ_Orai">
    <Reactant specieID="Orai"/>
    <Reactant specieID="PMJ_STIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>1.5e-04</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_4" power="2"/>
    <Product specieID="Orai2STIM_4"/>
    <forwardRate>3.75e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="Orai2STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <forwardRate>9.375e-06</forwardRate>
    <reverseRate>5e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai8" id="STIM_Orai8">
    <Reactant specieID="Orai3STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai2STIM_4" power="2"/>
    <forwardRate>9.375e-06</forwardRate>

  </Reaction>

  
<Specie name="CaCbuf" id="CaCbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="Cbuf" id="Cbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaBCa" id="CaBCa" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaB" id="CaB" kdiff="10" kdiffunit="mu2/s"/>
  
  <Reaction name="CaIn_buffer" id="CaIn_buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaB"/>
    <Product specieID="CaBCa"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaCbufCa+Cbuf" id="CaCbufCa+Cbuf">
    <Reactant specieID="CaCbuf"/>
    <Product specieID="Cbuf"/>
    <Product specieID="Ca"/>
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="CaOut+CbufNULL" id="CaOut_CbufNULL">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Cbuf"/>
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
</ReactionScheme>
