<?xml version="1.0"?>
<ReactionScheme>

  
 
  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="0." kdiffunit="mu2/s"/>
  
  <Specie name="CaERLeak" id="CaERLeak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="SERCA" id="SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca" id="SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_Ca2" id="SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="SERCA_CaER" id="SERCA_CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
  <!--*************************************************************************
  Now, the reactions themselves   SAME means params are same in both files
  **************************************************************************-->
     
  <!-- Serca -->
  <Reaction name = "SERCA_1a" id="SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA"/>
    <Product specieID="SERCA_Ca"/>
    
    <forwardRate>2e-3</forwardRate>
    <reverseRate>0.04</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


 
  <Reaction name = "SERCA_1b" id="SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="SERCA_Ca"/>
    <Product specieID="SERCA_Ca2"/>
        
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>25e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name = "SERCA_1c" id="SERCA_1c">
    <Reactant specieID="SERCA_Ca2"/>
    <Product specieID="CaER" />
    <Product specieID="SERCA_CaER"/>
    <forwardRate>0.274</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "SERCA_1d" id="SERCA_1d">
    <Reactant specieID="SERCA_CaER"/>
    <Product specieID="CaER" />
    <Product specieID="SERCA"/>
    <forwardRate>0.274</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


 <!-- ER Ca leak -    CaER+ LeakER <-> CaERLeak-->
  <Reaction name = "Ca_leakER" id="Ca_leakaER">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="CaERLeak"/>
    
    <forwardRate>7.e-2</forwardRate>
    <reverseRate>110</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
    
<!--  ER Ca leak -    CaERLeak <-> Ca + LeakER-->
  <Reaction name = "Ca_leakER" id="Ca_leakbER">
    <Reactant specieID="CaERLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="LeakER"/>
    
    <forwardRate>2.5e-2</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-6</forwardRate>
    <reverseRate>0.01</reverseRate>
    </Reaction>


  
</ReactionScheme>
